---
API: 2
OpenSesame: 3.1.1
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title Simulation2016_Registered
set subject_parity even
set subject_nr 0
set start EXP
set sampler_backend legacy
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set foreground white
set font_size 18
set font_italic no
set font_family "chinese-japanese-korean"
set font_bold no
set experiment_path "D:/core/Research/projects/Embodied/EXPDATA/ActionObject/2016_Simulation/EXP/2016_Orien_Size"
set description "Matching Tasks"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi yes
set background black

define sequence Chinese
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Welcome_C always
	run Welcome_response_C always
	run Prac_setup_C always
	run Prac_C always
	run Start_C always
	run Start_response_C always
	run List_Select_C always
	run Exp_seq_C always
	run End_C always

define inline_script Disable_Mouse
	set description "Executes Python code"
	___run__
	my_mouse = mouse()
	my_mouse.show_cursor(show = False)
	__end__
	set _prepare ""

define sequence Dutch
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Welcome_D always
	run Prac_setup_D always
	run Prac_D always
	run Start_D always
	run List_Select_D always
	run Exp_seq_D always
	run End_D always

define sequence EXP
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Language_Selection always
	run Disable_Mouse always
	run Chinese "[language1]='yes'"
	run Dutch "[language2]='yes'"
	run English "[language3]='yes'"

define sketchpad End_C
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="實驗結束。請通知實驗者。" x=0 y=0 z_index=0

define sketchpad End_D
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Eind Experiment<br/><br/>Vertel de experimentator." x=0 y=0 z_index=0

define sketchpad End_E
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="End of Experiment<br /><br />Before leave LAB. <br />Please answer four questions.<br /><br /><br />Press SPACE to quetions." x=0 y=0 z_index=0

define sequence English
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Welcome_E always
	run Prac_setup_E always
	run Prac_E always
	run Start_E always
	run List_Select_E always
	run Exp_seq_E always
	run End_E always

define loop Exp_loop_C
	set source_file "[List]"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Balance = ABCD"
	set cycles 1
	set continuous no
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Orien ""
	setcycle 0 Target ""
	setcycle 0 Probe ""
	setcycle 0 correct_response ""
	setcycle 0 Match ""
	setcycle 0 Size ""
	run Trial

define loop Exp_loop_D
	set source_file "[List]"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Balance = ABCD"
	set cycles 1
	set continuous no
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Orien ""
	setcycle 0 Target ""
	setcycle 0 Probe ""
	setcycle 0 correct_response ""
	setcycle 0 Match ""
	setcycle 0 Size ""
	run Trial

define loop Exp_loop_E
	set source_file "[List]"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_E
	set description "Balance = ABCD"
	set cycles 1
	set continuous no
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Orien ""
	setcycle 0 Target ""
	setcycle 0 Probe ""
	setcycle 0 correct_response ""
	setcycle 0 Match ""
	setcycle 0 Size ""
	run Trial

define sequence Exp_seq_C
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run presetup always
	run Exp_loop_C always

define sequence Exp_seq_D
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run presetup always
	run Exp_loop_D always

define sequence Exp_seq_E
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run presetup always
	run Exp_loop_E always

define sketchpad First_Fixation
	set duration 1000
	set description "Displays Initial Fixation"
	draw fixdot color="#ffff00" show_if=always style=default x=-432 y=0 z_index=0

define sketchpad First_Fixation_Prac
	set duration 1000
	set description "Displays Initial Fixation"
	draw fixdot color="#ffff00" show_if=always style=default x=-432 y=0 z_index=0

define form_text_display Language_Selection
	set timeout infinite
	set spacing 10
	set rows "1;1;1;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Welcom You Join This Experiment</span>"
	set form_text "Select a Langauge"
	set description "A simple text display form"
	set cols "1;1"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 1 1 button center=yes frame=yes text=Chinese var=language1
	widget 1 2 1 1 button center=yes frame=yes text=Dutch var=language2
	widget 2 2 1 1 button center=yes frame=yes text=English var=language3


define inline_script List_Select_C
	set description "Executes Python code"
	___run__
	### Get the subject number
	nr = self.get('subject_nr')
	
	### Generate a random sequence based the prior seed
	### Defind seed by yourself
	import random
	### The date we begin the Chinese registered experiment
	SEED = 1200
	
	seq = [0,4,8,12,16,20,24,28,32,36,40]
	random.seed(SEED)
	random.shuffle(seq)
	
	if nr <=16:
		nr += seq[0]
	elif nr > 16 & nr <= 32:
		nr += seq[1]
	elif nr > 32 & nr <= 48:
		nr += seq[2]
	elif nr > 48 & nr <= 64:
		nr += seq[3]
	elif nr > 64 & nr <= 80:
		nr += seq[4]
	elif nr > 80 & nr <= 96:
		nr += seq[5]
	else:
		nr += seq[6]
	
	### Assign the list in one Latin Squane
	if (nr / 4) % 4 == 1:
		if nr % 4 == 0:
			lst = 'C_List01.csv'
		elif nr % 4 == 1:
			lst = 'C_List02.csv'
		elif nr % 4 == 2:
			lst = 'C_List03.csv'
		else:
			lst = 'C_List04.csv'
	elif (nr / 4) % 4 == 2:
		if nr % 4 == 1:
			lst = 'C_List01.csv'
		elif nr % 4 == 2:
			lst = 'C_List02.csv'
		elif nr % 4 == 3:
			lst = 'C_List03.csv'
		else:
			lst = 'C_List04.csv'
	elif (nr / 4) % 4 == 3:
		if nr % 4 == 2:
			lst = 'C_List01.csv'
		elif nr % 4 == 3:
			lst = 'C_List02.csv'
		elif nr % 4 == 0:
			lst = 'C_List03.csv'
		else:
			lst = 'C_List04.csv'
	else:
		if nr % 4 == 3:
			lst = 'C_List01.csv'
		elif nr % 4 == 0:
			lst = 'C_List02.csv'
		elif nr % 4 == 1:
			lst = 'C_List03.csv'
		else:
			lst = 'C_List04.csv'
	
	### Output [List] to the loop object
	exp.set('List', lst)
	__end__
	set _prepare ""

define inline_script List_Select_D
	set description "Executes Python code"
	___run__
	nr = self.get('subject_nr')
	
	import random
	### The date we finished the Dutch Pilot
	SEED = 1117
	
	seq = [0,4,8,12,16,20,24,28,32,36,40]
	random.seed(SEED)
	random.shuffle(seq)
	
	if nr <=16:
		nr += seq[0]
	elif nr > 16 & nr <= 32:
		nr += seq[1]
	elif nr > 32 & nr <= 48:
		nr += seq[2]
	elif nr > 48 & nr <= 64:
		nr += seq[3]
	elif nr > 64 & nr <= 80:
		nr += seq[4]
	elif nr > 80 & nr <= 96:
		nr += seq[5]
	else:
		nr += seq[6]
	
	if (nr / 4) % 4 == 1:
		if nr % 4 == 0:
			lst = 'D_List01.csv'
		elif nr % 4 == 1:
			lst = 'D_List02.csv'
		elif nr % 4 == 2:
			lst = 'D_List03.csv'
		else:
			lst = 'D_List04.csv'
	elif (nr / 4) % 4 == 2:
		if nr % 4 == 1:
			lst = 'D_List01.csv'
		elif nr % 4 == 2:
			lst = 'D_List02.csv'
		elif nr % 4 == 3:
			lst = 'D_List03.csv'
		else:
			lst = 'D_List04.csv'
	elif (nr / 4) % 4 == 3:
		if nr % 4 == 2:
			lst = 'D_List01.csv'
		elif nr % 4 == 3:
			lst = 'D_List02.csv'
		elif nr % 4 == 0:
			lst = 'D_List03.csv'
		else:
			lst = 'D_List04.csv'
	else:
		if nr % 4 == 3:
			lst = 'D_List01.csv'
		elif nr % 4 == 0:
			lst = 'D_List02.csv'
		elif nr % 4 == 1:
			lst = 'D_List03.csv'
		else:
			lst = 'D_List04.csv'
	
	exp.set('List', lst)
	__end__
	set _prepare ""

define inline_script List_Select_E
	set description "Executes Python code"
	___run__
	nr = self.get('subject_nr')
	
	import random
	SEED = 345
	
	seq = [0,4,8,12,16,20,24,28,32,36,40]
	random.seed(SEED)
	random.shuffle(seq)
	
	if nr <=16:
		nr += seq[0]
	elif nr > 16 & nr <= 32:
		nr += seq[1]
	elif nr > 32 & nr <= 48:
		nr += seq[2]
	elif nr > 48 & nr <= 64:
		nr += seq[3]
	elif nr > 64 & nr <= 80:
		nr += seq[4]
	elif nr > 80 & nr <= 96:
		nr += seq[5]
	else:
		nr += seq[6]
	
	if (nr / 4) % 4 == 1:
		if nr % 4 == 0:
			lst = 'E_List01.csv'
		elif nr % 4 == 1:
			lst = 'E_List02.csv'
		elif nr % 4 == 2:
			lst = 'E_List03.csv'
		else:
			lst = 'E_List04.csv'
	elif (nr / 4) % 4 == 2:
		if nr % 4 == 1:
			lst = 'E_List01.csv'
		elif nr % 4 == 2:
			lst = 'E_List02.csv'
		elif nr % 4 == 3:
			lst = 'E_List03.csv'
		else:
			lst = 'E_List04.csv'
	elif (nr / 4) % 4 == 3:
		if nr % 4 == 2:
			lst = 'E_List01.csv'
		elif nr % 4 == 3:
			lst = 'E_List02.csv'
		elif nr % 4 == 0:
			lst = 'E_List03.csv'
		else:
			lst = 'E_List04.csv'
	else:
		if nr % 4 == 3:
			lst = 'E_List01.csv'
		elif nr % 4 == 0:
			lst = 'E_List02.csv'
		elif nr % 4 == 1:
			lst = 'E_List03.csv'
		else:
			lst = 'E_List04.csv'
	
	exp.set('List', lst)
	__end__
	set _prepare ""

define loop Prac_C
	set source_file ""
	set source table
	set repeat 100
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[correct_count]=6"
	setcycle 0 empty_column ""
	run Prac_seq_C

define inline_script Prac_Count
	set description "Executes Python code"
	___run__
	if var.correct == 1: 
		var.correct_count +=1
	else:
		var.correct_count = 0
		var.reset_loop = 1
	__end__
	set _prepare ""

define loop Prac_D
	set source_file ""
	set source table
	set repeat 100
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[correct_count]=6"
	setcycle 0 empty_column ""
	run Prac_seq_D

define loop Prac_E
	set source_file ""
	set source table
	set repeat 100
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[correct_count]=6"
	setcycle 0 empty_column ""
	run Prac_seq_E

define inline_script Prac_Reset_C
	set description "Executes Python code"
	set _run "var.reset_loop = 0"
	set _prepare ""

define inline_script Prac_Reset_D
	set description "Executes Python code"
	set _run "var.reset_loop = 0"
	set _prepare ""

define inline_script Prac_Reset_E
	set description "Executes Python code"
	set _run "var.reset_loop = 0"
	set _prepare ""

define sequence Prac_Trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run First_Fixation_Prac always
	run Probe_Prac always
	run Probe_Prac_response always
	run Second_Fixation_Prac always
	run Target_Prac always
	run Target_response_Prac always
	run Target_response_correct_Prac "[correct]=1"
	run Target_response_wrong_Prac "[correct]=0"
	run Target_response_noans_Prac "[response_time] > 1499"
	run Prac_Count always

define loop Prac_loop_C
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set column_order "Probe;Target;correct_response"
	set break_if_on_first yes
	set break_if "[reset_loop]=1"
	setcycle 0 correct_response j
	setcycle 0 Probe 那張桌子在地板上
	setcycle 0 Target "STI/Prac-01.jpg"
	setcycle 1 correct_response j
	setcycle 1 Probe 那隻玻璃花瓶在地上
	setcycle 1 Target "STI/Prac-02.jpg"
	setcycle 2 correct_response f
	setcycle 2 Probe 那片餅乾在碗裡
	setcycle 2 Target "STI/Prac-03.jpg"
	setcycle 3 correct_response f
	setcycle 3 Probe 那隻盤子是乾淨的
	setcycle 3 Target "STI/Prac-04.jpg"
	setcycle 4 correct_response f
	setcycle 4 Probe 那雙溜冰鞋在牆上
	setcycle 4 Target "STI/Prac-05.jpg"
	setcycle 5 correct_response j
	setcycle 5 Probe 那隻老鷹在天空飛翔
	setcycle 5 Target "STI/Prac-06.jpg"
	run Prac_Trial

define loop Prac_loop_D
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set column_order "Probe;Target;correct_response"
	set break_if_on_first yes
	set break_if "[reset_loop]=1"
	setcycle 0 correct_response j
	setcycle 0 Probe "De tafel is in de kamer."
	setcycle 0 Target "STI/Prac-01.jpg"
	setcycle 1 correct_response j
	setcycle 1 Probe "De vaas is aan de showcase."
	setcycle 1 Target "STI/Prac-02.jpg"
	setcycle 2 correct_response f
	setcycle 2 Probe "De koekjes zijn in de kom."
	setcycle 2 Target "STI/Prac-03.jpg"
	setcycle 3 correct_response f
	setcycle 3 Probe "Het gerecht is vuil."
	setcycle 3 Target "STI/Prac-04.jpg"
	setcycle 4 correct_response f
	setcycle 4 Probe "De rolschaatsen zijn op de muur."
	setcycle 4 Target "STI/Prac-05.jpg"
	setcycle 5 correct_response j
	setcycle 5 Probe "De adelaar vliegt."
	setcycle 5 Target "STI/Prac-06.jpg"
	run Prac_Trial

define loop Prac_loop_E
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_E
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set column_order "Probe;Target;correct_response"
	set break_if_on_first yes
	set break_if "[reset_loop]=1"
	setcycle 0 correct_response j
	setcycle 0 Probe "The table is in the room."
	setcycle 0 Target "STI/Prac-01.jpg"
	setcycle 1 correct_response j
	setcycle 1 Probe "The glass vase is on the showcase."
	setcycle 1 Target "STI/Prac-02.jpg"
	setcycle 2 correct_response f
	setcycle 2 Probe "The cookies are in the bowl."
	setcycle 2 Target "STI/Prac-03.jpg"
	setcycle 3 correct_response f
	setcycle 3 Probe "The dish is dirty."
	setcycle 3 Target "STI/Prac-04.jpg"
	setcycle 4 correct_response f
	setcycle 4 Probe "The roller skates are on the wall."
	setcycle 4 Target "STI/Prac-05.jpg"
	setcycle 5 correct_response j
	setcycle 5 Probe "The eagle is flying."
	setcycle 5 Target "STI/Prac-06.jpg"
	run Prac_Trial

define sequence Prac_seq_C
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Prac_Reset_C always
	run Prac_loop_C always

define sequence Prac_seq_D
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Prac_Reset_D always
	run Prac_loop_D always

define sequence Prac_seq_E
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Prac_Reset_E always
	run Prac_loop_E always

define inline_script Prac_setup_C
	set description "Executes Python code"
	___run__
	var.correct_count = 0
	var.reset_loop = 0
	__end__
	set _prepare ""

define inline_script Prac_setup_D
	set description "Executes Python code"
	___run__
	var.correct_count = 0
	var.reset_loop = 0
	__end__
	set _prepare ""

define inline_script Prac_setup_E
	set description "Executes Python code"
	___run__
	var.correct_count = 0
	var.reset_loop = 0
	__end__
	set _prepare ""

define sketchpad Probe
	set duration 0
	set description "Displays stimuli sentence"
	draw textline center=0 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if="[language1]=yes" text="[Probe]" x=-432 y=0 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if="[language2]=yes" text="[Probe]" x=-432 y=0 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if="[language3]=yes" text="[Probe]" x=-432 y=0 z_index=0

define inline_script Probe_Collect
	set description "Executes Python code"
	___run__
	### Enqueue the probes into list
	probe_list.append(self.get("Probe"))
	__end__
	set _prepare ""

define sketchpad Probe_Prac
	set duration 0
	set description "Displays stimuli sentence"
	draw textline center=0 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="[Probe]" x=-432 y=0 z_index=0

define keyboard_response Probe_Prac_response
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define inline_script Probe_import
	set description "Executes Python code"
	set _run ""
	___prepare__
	### Randomly select the probe sentence from list
	import random
	### Choose from the past 16 trials; otherwise choose from the past 8 trials
	#if(self.get('count_Probe_Collect') < 8):
	#		idx = random.choice(range(len(probe_list)))
	#else:
	idx = random.choice(range(len(probe_list) - 6, len(probe_list)))
	
	### Export the probe sentence for recognition
	rectarget = probe_list[idx]
	var.set('rectarget', rectarget)
	### Set up correct_response
	if(idx > (self.get('count_Probe_Collect') - 3) ):
			var.set('correct_response', 'j')
	else:
			var.set('correct_response', 'f')
	__end__

define loop Probe_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Task M
	run Probe_sequence

define keyboard_response Probe_response
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define sequence Probe_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Probe_import always
	run Probe_sti always
	run Probe_sti_response always
	run Probe_sti_correct "[correct]==1"
	run Probe_sti_wrong "[correct]==0"
	run Trial_logger always

define sketchpad Probe_sti
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if="[language1]=yes" text="剛剛讀過的3個句子有沒有包括這一句？" x=0 y=-100 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if="[language2]=yes" text="Is dit een van de laatste 3 zinnen die je hebt gelezen?" x=0 y=-100 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if="[language3]=yes" text="Is this one of the past 3 sentences you have read?" x=0 y=-100 z_index=0
	draw textline center=1 color="#55aaff" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if="[language1]=yes" text="[rectarget]" x=0 y=0 z_index=0
	draw textline center=1 color="#55aaff" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if="[language2]=yes" text="[rectarget]" x=0 y=0 z_index=0
	draw textline center=1 color="#55aaff" font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if="[language3]=yes" text="[rectarget]" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if="[language1]=yes" text="F：沒有             J：有" x=0 y=100 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if="[language2]=yes" text="F: NEE             J: JA" x=0 y=100 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if="[language3]=yes" text="F: NO             J: YES" x=0 y=100 z_index=0

define sketchpad Probe_sti_correct
	set duration 1500
	set description "Correct Feedback"
	draw textline center=1 color="#00aa00" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="作答正確!" x=-6 y=-3 z_index=0
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Correct!" x=-6 y=-3 z_index=0
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Correct!" x=-6 y=-3 z_index=0

define keyboard_response Probe_sti_response
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "f;j"

define sketchpad Probe_sti_wrong
	set duration 1500
	set description "Error feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="作答錯誤!" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Fout!" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Error!" x=0 y=0 z_index=0

define sketchpad Second_Fixation
	set duration 500
	set description "Displays Second Fixation"
	draw fixdot color="#ffffff" show_if=always style=default x=0 y=0 z_index=0

define sketchpad Second_Fixation_Prac
	set duration 500
	set description "Displays Second Fixation"
	draw fixdot color="#ffffff" show_if=always style=default x=0 y=0 z_index=0

define sketchpad Start_C
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=請仔細閱讀每個句子 x=3 y=-100 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=實驗過程中隨機抽問能否記得剛讀過的句子 x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="若無問題，請按空白鍵開始正式實驗。" x=0 y=100 z_index=0

define sketchpad Start_D
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="Lees de zinnen zorgvuldig," x=0 y=-60 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="want we zullen je geheugen hiervoor testen." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="Druk de spatiebalk om te beginnen." x=0 y=100 z_index=0

define sketchpad Start_E
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="Read the sentences carefully," x=0 y=-60 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="We will test your memory for them later on." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="Press space key to start" x=-4 y=60 z_index=0

define keyboard_response Start_response_C
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define sketchpad Target
	set duration 0
	set description "Displays target picture"
	draw image center=1 file="[Target]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Target_Prac
	set duration 0
	set description "Displays target picture"
	draw image center=1 file="[Target]" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response Target_response
	set timeout 2000
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "j;f"

define keyboard_response Target_response_Prac
	set timeout 2000
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "j;f"

define sketchpad Target_response_correct
	set duration 500
	set description "Correct Feedback"
	draw textline center=1 color="#00aa00" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="作答正確!" x=-6 y=-3 z_index=0
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Correct!" x=-6 y=-3 z_index=0
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Correct!" x=-6 y=-3 z_index=0

define sketchpad Target_response_correct_Prac
	set duration 500
	set description "Correct Feedback"
	draw textline center=1 color="#00aa00" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="作答正確!" x=-6 y=-3 z_index=0
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Correct!" x=-6 y=-3 z_index=0
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Correct!" x=-6 y=-3 z_index=0

define sketchpad Target_response_noans
	set duration 500
	set description "No Answer Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text=按鍵太慢 x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Te Laat" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Too Late" x=0 y=0 z_index=0

define sketchpad Target_response_noans_Prac
	set duration 500
	set description "No Answer Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text=按鍵太慢 x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Te Laat" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Too Late" x=0 y=0 z_index=0

define sketchpad Target_response_wrong
	set duration 500
	set description "Wrong Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="作答錯誤!" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Fout!" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Error!" x=0 y=0 z_index=0

define sketchpad Target_response_wrong_Prac
	set duration 500
	set description "Wrong Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="作答錯誤!" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Fout!" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Error!" x=0 y=0 z_index=0

define sequence Trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run First_Fixation always
	run Probe always
	run Probe_Collect always
	run Probe_response always
	run Second_Fixation always
	run Target always
	run Target_response always
	run Target_response_correct "[correct]=1"
	run Target_response_wrong "[correct]=0"
	run Target_response_noans "[response_time]>1499"
	run Trial_logger always
	run Probe_loop "=self.get('count_Probe_Collect') in idx_list"
	run Trial_Break "=(self.get('count_Probe_Collect') % 32 == 31) and (self.get('count_Probe_Collect') < 127)"

define feedback Trial_Break
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text=休息一下 x=-8 y=-171 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text=按空白鍵繼續 x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Neem een ​​pauze" x=-8 y=-171 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Druk op de spatiebalk en doorgaan" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Take a break" x=-8 y=-171 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Press space bar and continue" x=0 y=0 z_index=0

define logger Trial_logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad Welcome_C
	set duration 0
	set description "First Instruction"
	draw textline center=1 color=white font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=句圖比對作業 x=0 y=-288 z_index=0
	draw textline center=0 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text="每一題的的程序是先一個要閱讀的句子，再呈現要判斷的圖片。 <br /><br />你的任務是判斷圖片呈現的物件，是句子裡提到的物件。你可以<br />確實讀完句子，再按空白鍵讓電腦呈現圖片。<br /><br />如果圖片呈現的是句子提到的物件，請按'j'。<br />如果圖片呈現的不是句子提到的物件，請按'f'。<br /><br />判斷圖片是否符合有時間限制，請以最快且最正確的方式作答。<br /><br />" x=-448 y=-224 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text=請確認沒有問題之後按空白鍵開始實驗 x=0 y=192 z_index=0

define sketchpad Welcome_D
	set duration keypress
	set description "First Instruction"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Zin Picture Verification" x=0 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=30 html=yes show_if=always text="Druk op de spatiebalk om met het experiment te beginnen" x=8 y=150 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=-160 y=-32 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="In dit experiment lees je telkens een zin waarna je een afbeelding ziet. <br/><br/>Het is jouw taak om na elke afbeelding aan te geven of het afgebeelde voorwerp <br/> voorkwam in de voorgaande zin.<br/><br/>Druk ‘j’ als je denkt dat het voorwerp  in de zin voorkwam.<br/>Druk op ‘f’ als je denkt dat het voorwerp niet in de zin voorkwam.<br/><br/>Probeer zo snel en accuraat mogelijk te reageren." x=-448 y=-192 z_index=0

define sketchpad Welcome_E
	set duration keypress
	set description "First Instruction"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Sentence Picture Verification" x=-20 y=-284 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Press space bar to practice" x=0 y=192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=-160 y=-32 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Next you will read a sentence which is followed by a picture. <br /><br />In every trial, your task is to verify if the picture show the object <br />mentioned in the preceding sentence.<br /><br />Press 'j' when the picture shows the object.<br />Press 'f' when the picture does not show the object.<br /><br />Try to be as fast and accurate as possible." x=-448 y=-192 z_index=0

define keyboard_response Welcome_response_C
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define inline_script presetup
	set description "Executes Python code"
	___run__
	### codes from http://stackoverflow.com/questions/27276135/python-random-system-time-seed
	import random
	from datetime import datetime
	random.seed(datetime.now())
	
	### Call empty list for comprehension task
	probe_list = []
	### Select the index of sentences for comprehension task
	a = range(-1,2)*10
	random.shuffle(a)
	idx_list = [sum(x) for x in zip(range(6,126,4), a)]
	### Save the index in the variable
	var.set('alt_task',idx_list)
	__end__
	set _prepare ""

