---
API: 2
OpenSesame: 3.0.5
Platform: nt
---
set width 1024
set uniform_coordinates "yes"
set title "Simulation2016_EXP01"
set subject_parity "even"
set subject_nr 0
set start "EXP01"
set sampler_backend "legacy"
set mouse_backend "xpyriment"
set keyboard_backend "legacy"
set height 768
set foreground "white"
set font_size 18
set font_italic "no"
set font_family "chinese-japanese-korean"
set font_bold "no"
set description "Matching Tasks"
set coordinates "uniform"
set compensation 0
set color_backend "legacy"
set clock_backend "legacy"
set canvas_backend "xpyriment"
set bidi "no"
set background "black"

define loop 1st_Move_Prac_loop_C
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_C"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_C

define loop 1st_Move_Prac_loop_E
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define sequence 1st_Move_seq_C
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run List_Selection_cond2_C always
	run List01_loop_C2 "[List1] = 'yes'"
	run List02_loop_C2 "[List2] = 'yes'"
	run List03_loop_C2 "[List3] = 'yes'"
	run List04_loop_C2 "[List4] = 'yes'"

define sequence 1st_Move_seq_E
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run List_Selection_cond2_E always
	run List01_loop_E2 "[List1] = 'yes'"
	run List02_loop_E2 "[List2] = 'yes'"
	run List03_loop_E2 "[List3] = 'yes'"
	run List04_loop_E2 "[List4] = 'yes'"

define loop 1st_Observe_Prac_loop_C
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_C"
	set description "Repeatedly runs another item"
	set cycles 4
	set column_order "Probe;Target;correct_response"
	set break_if "never"
	setcycle 0 correct_response "/"
	setcycle 0 Probe "我要查看放滿東西的桌子"
	setcycle 0 Target "STI/Prac-01.bmp"
	setcycle 1 correct_response "/"
	setcycle 1 Probe "我要查看玻璃做的花瓶"
	setcycle 1 Target "STI/Prac-02.bmp"
	setcycle 2 correct_response "z"
	setcycle 2 Probe "我要查看沒人吃過的餅乾"
	setcycle 2 Target "STI/Prac-03.bmp"
	setcycle 3 correct_response "z"
	setcycle 3 Probe "我要查看要清洗的盤子"
	setcycle 3 Target "STI/Prac-04.bmp"
	run Trial_C

define loop 1st_Observe_Prac_loop_E
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define sequence 1st_Observe_seq_C
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run List_Selection_cond1_C always
	run List01_loop_C1 "[List1] = 'yes'"
	run List02_loop_C1 "[List2] = 'yes'"
	run List03_loop_C1 "[List3] = 'yes'"
	run List04_loop_C1 "[List4] = 'yes'"

define sequence 1st_Observe_seq_E
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run List_Selection_cond1_E always
	run List01_loop_E1 "[List1] = 'yes'"
	run List02_loop_E1 "[List2] = 'yes'"
	run List03_loop_E1 "[List3] = 'yes'"
	run List04_loop_E1 "[List4] = 'yes'"

define loop 3rd_Move_Prac_loop_C
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_C"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_C

define loop 3rd_Move_Prac_loop_E
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define sequence 3rd_Move_seq_C
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run List_Selection_cond4_C always
	run List01_loop_C3 always
	run List02_loop_C3 always
	run List03_loop_C3 always
	run List04_loop_C3 always

define sequence 3rd_Move_seq_E
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run List_Selection_cond4_E always
	run List01_loop_E4 "[List1] = 'yes'"
	run List02_loop_E4 "[List2] = 'yes'"
	run List03_loop_E4 "[List3] = 'yes'"
	run List04_loop_E4 "[List4] = 'yes'"

define loop 3rd_Observe_Prac_loop_C
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_C"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_C

define loop 3rd_Observe_Prac_loop_E
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define sequence 3rd_Observe_seq_C
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run List_Selection_cond3_C always
	run List01_loop_C4 always
	run List02_loop_C4 always
	run List03_loop_C4 always
	run List04_loop_C4 always

define sequence 3rd_Observe_seq_E
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run List_Selection_cond3_E always
	run List01_loop_E3 "[List1] = 'yes'"
	run List02_loop_E3 "[List2] = 'yes'"
	run List03_loop_E3 "[List3] = 'yes'"
	run List04_loop_E3 "[List4] = 'yes'"

define sequence Chinese
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run Condition_Selection_C always
	run Welcome_C always
	run Prac_seq_C always
	run Start_C always
	run 1st_Observe_seq_C "[condition1]='yes'"
	run 1st_Move_seq_C "[condition2]='yes'"
	run 3rd_Observe_seq_C "[condition3]='yes'"
	run 3rd_Move_seq_C "[condition4]='yes'"

define form_text_display Condition_Selection_C
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>選擇實驗情況</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=第一觀 var=condition1
	widget 1 1 1 1 button center=yes frame=yes text="第一動(準備中)" var=condition2
	widget 0 2 1 1 button center=yes frame=yes text="第三觀(準備中)" var=condition3
	widget 1 2 1 1 button center=yes frame=yes text="第三動(準備中)" var=condition4


define form_text_display Condition_Selection_E
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>Select a Condition</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=1st_Observe var=condition1
	widget 1 1 1 1 button center=yes frame=yes text="1st_Move(Preparing)" var=condition2
	widget 0 2 1 1 button center=yes frame=yes text="3rd_Observe(Preparing)" var=condition3
	widget 1 2 1 1 button center=yes frame=yes text="3rd_Move(Preparing)" var=condition4


define sequence Dutch
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run Condition_Selection_E always
	run Welcome_E always
	run Prac_seq_E always
	run Start_E always
	run 1st_Observe_seq_E "[condition1]='yes'"
	run 1st_Move_seq_E "[condition2]='yes'"
	run 3rd_Observe_seq_E "[condition4]='yes'"
	run 3rd_Move_seq_E "[condition3]='yes'"

define sequence EXP01
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run Language_Selection always
	run Chinese "[language1]='yes'"
	run Dutch "[language2]='yes'"

define sketchpad First_Fixation
	set duration 1000
	set description "Displays Initial Fixation"
	draw fixdot color="#ffff00" show_if=always style=default x=-384 y=0 z_index=0

define form_text_display Language_Selection
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>請選擇語言  Choose Language</span>"
	__form_text__
	執行中文實驗請按"中文"
	Press "English" if you are going to run English
	__end__
	set description "A simple text display form"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 1 1 button center=yes frame=yes text=中文 var=language1
	widget 1 2 1 1 button center=yes frame=yes text="English(Preparing)" var=language2


define loop List01_loop_C1
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_C"
	set description "Balance = ABCD"
	set cycles 160
	set column_order "Probe;Target;Match;size;Pic;correct_response"
	set break_if "never"
	setcycle 0 Pic "Default"
	setcycle 0 Target "STI/020-baignoire_bathtub.GIF"
	setcycle 0 Probe "我看見一個沒裝水的浴缸"
	setcycle 0 correct_response "/"
	setcycle 0 Match "Y"
	setcycle 0 size "L"
	setcycle 1 Pic "Default"
	setcycle 1 Target "STI/couch.jpg"
	setcycle 1 Probe "我看見家俱店櫥窗裡的一組雙人沙發"
	setcycle 1 correct_response "/"
	setcycle 1 Match "Y"
	setcycle 1 size "L"
	setcycle 2 Pic "Default"
	setcycle 2 Target "STI/rocker.jpg"
	setcycle 2 Probe "我看見一個沒人坐的搖椅"
	setcycle 2 correct_response "/"
	setcycle 2 Match "Y"
	setcycle 2 size "L"
	setcycle 3 Pic "Default"
	setcycle 3 Target "STI/178-locomotive_locomotive.GIF"
	setcycle 3 Probe "我看見一輛進站中的蒸氣火車頭"
	setcycle 3 correct_response "/"
	setcycle 3 Match "Y"
	setcycle 3 size "L"
	setcycle 4 Pic "Default"
	setcycle 4 Target "STI/008-ambulance_ambulance.GIF"
	setcycle 4 Probe "我看見一輛載著病患的救護車"
	setcycle 4 correct_response "/"
	setcycle 4 Match "Y"
	setcycle 4 size "L"
	setcycle 5 Pic "Default"
	setcycle 5 Target "STI/064-camping-car_camper.GIF"
	setcycle 5 Probe "我看見一輛開往目的地的露營車"
	setcycle 5 correct_response "/"
	setcycle 5 Match "Y"
	setcycle 5 size "L"
	setcycle 6 Pic "Default"
	setcycle 6 Target "STI/018-car_bus.GIF"
	setcycle 6 Probe "我看見一輛準備發動的大巴士"
	setcycle 6 correct_response "/"
	setcycle 6 Match "Y"
	setcycle 6 size "L"
	setcycle 7 Pic "Default"
	setcycle 7 Target "STI/car.jpg"
	setcycle 7 Probe "我看見一台氣派的轎車"
	setcycle 7 correct_response "/"
	setcycle 7 Match "Y"
	setcycle 7 size "L"
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	setcycle 10 Pic "Roated"
	setcycle 10 Target "STI/plane_r.jpg"
	setcycle 10 Probe "我看見一台急速下墜的飛機"
	setcycle 10 correct_response "/"
	setcycle 10 Match "Y"
	setcycle 10 size "L"
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	setcycle 20 Pic "Default"
	setcycle 20 Target "STI/cementtruck.jpg"
	setcycle 20 Probe "我看一輛四輪朝天的水泥攪拌車"
	setcycle 20 correct_response "/"
	setcycle 20 Match "N"
	setcycle 20 size "L"
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	setcycle 30 Pic "Roated"
	setcycle 30 Target "STI/lawnmowertractor_r.jpg"
	setcycle 30 Probe "我看見一輛停在草地上的除草機"
	setcycle 30 correct_response "/"
	setcycle 30 Match "N"
	setcycle 30 size "L"
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	setcycle 40 Pic "Default"
	setcycle 40 Target "STI/badmintonracket.jpg"
	setcycle 40 Probe "我看見球員握在手中的羽球拍"
	setcycle 40 correct_response "/"
	setcycle 40 Match "Y"
	setcycle 40 size "S"
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	setcycle 50 Pic "Roated"
	setcycle 50 Target "STI/carrot01_r.jpg"
	setcycle 50 Probe "我看見剛剛被拔起來的胡蘿蔔"
	setcycle 50 correct_response "/"
	setcycle 50 Match "Y"
	setcycle 50 size "S"
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	setcycle 60 Pic "Default"
	setcycle 60 Target "STI/pictureframe04.jpg"
	setcycle 60 Probe "我看見收在抽屜裡的相框"
	setcycle 60 correct_response "/"
	setcycle 60 Match "N"
	setcycle 60 size "S"
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	setcycle 70 Pic "Roated"
	setcycle 70 Target "STI/007-allumette_match_r.jpg"
	setcycle 70 Probe "我看見一支擺在桌面的火柴棒"
	setcycle 70 correct_response "/"
	setcycle 70 Match "N"
	setcycle 70 size "S"
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	setcycle 80 Pic "D"
	setcycle 80 Target "STI/240-pont_bridge.GIF"
	setcycle 80 Probe "我看到一個放在超市架子的保特瓶"
	setcycle 80 correct_response "z"
	setcycle 80 Match "D"
	setcycle 80 size "D"
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	run Trial_C

define loop List01_loop_C2
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List01_loop_C3
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List01_loop_C4
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List01_loop_E1
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 4
	set column_order "Probe;Target;Match;correct_response"
	set break_if "never"
	setcycle 0 correct_response "/"
	setcycle 0 Probe ""
	setcycle 0 Target "020-baignoire_bathtub.GIF"
	setcycle 0 Match "Y"
	setcycle 1 correct_response "/"
	setcycle 1 Probe ""
	setcycle 1 Target "064-camping-car_camper.GIF"
	setcycle 1 Match "N"
	setcycle 2 correct_response "z"
	setcycle 2 Probe ""
	setcycle 2 Target "071-bateau_boat.GIF"
	setcycle 2 Match "D"
	setcycle 3 correct_response "z"
	setcycle 3 Probe ""
	setcycle 3 Target "071-bateau_boat.GIF"
	setcycle 3 Match "D"
	run 

define loop List01_loop_E2
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List01_loop_E3
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List01_loop_E4
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List02_loop_C1
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_C"
	set description "Balance = BCDA"
	set cycles 160
	set column_order "Probe;Target;Match;size;Pic;correct_response"
	set break_if "never"
	setcycle 0 Pic "Roated"
	setcycle 0 Target "STI/020-baignoire_bathtub_r.jpg"
	setcycle 0 Probe "我看到一個下墜中的浴缸"
	setcycle 0 correct_response "/"
	setcycle 0 Match "Y"
	setcycle 0 size "L"
	setcycle 1 Pic "Roated"
	setcycle 1 Target "STI/couch_r.jpg"
	setcycle 1 Probe "我看見被丟在路上的一組雙人沙發"
	setcycle 1 correct_response "/"
	setcycle 1 Match "Y"
	setcycle 1 size "L"
	setcycle 2 Pic "Roated"
	setcycle 2 Target "STI/rocker_r.jpg"
	setcycle 2 Probe "我看見擺在垃圾堆高處的搖椅"
	setcycle 2 correct_response "/"
	setcycle 2 Match "Y"
	setcycle 2 size "L"
	setcycle 3 Pic "Roated"
	setcycle 3 Target "STI/178-locomotive_locomotive_r.jpg"
	setcycle 3 Probe "我看見一輛駛向高山的蒸氣火車頭"
	setcycle 3 correct_response "/"
	setcycle 3 Match "Y"
	setcycle 3 size "L"
	setcycle 4 Pic "Roated"
	setcycle 4 Target "STI/008-ambulance_ambulance_r.jpg"
	setcycle 4 Probe "我看見一輛車頭朝地面翻覆的救護車"
	setcycle 4 correct_response "/"
	setcycle 4 Match "Y"
	setcycle 4 size "L"
	setcycle 5 Pic "Roated"
	setcycle 5 Target "STI/064-camping-car_camper_r.jpg"
	setcycle 5 Probe "我看見一輛翻倒山崖下的露營車"
	setcycle 5 correct_response "/"
	setcycle 5 Match "Y"
	setcycle 5 size "L"
	setcycle 6 Pic "Roated"
	setcycle 6 Target "STI/018-car_bus_r.jpg"
	setcycle 6 Probe "我看見一輛懸掛在峭壁上的大巴士"
	setcycle 6 correct_response "/"
	setcycle 6 Match "Y"
	setcycle 6 size "L"
	setcycle 7 Pic "Roated"
	setcycle 7 Target "STI/car_r.jpg"
	setcycle 7 Probe "我看見一台四輪朝天的轎車"
	setcycle 7 correct_response "/"
	setcycle 7 Match "Y"
	setcycle 7 size "L"
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	setcycle 10 Pic "Default"
	setcycle 10 Target "STI/plane.jpg"
	setcycle 10 Probe "我看見一台急速下墜的飛機"
	setcycle 10 correct_response "/"
	setcycle 10 Match "N"
	setcycle 10 size "L"
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	setcycle 20 Pic "Roated"
	setcycle 20 Target "STI/cementtruck_r.jpg"
	setcycle 20 Probe "我看見一輛迎面而來的水泥攪伴車"
	setcycle 20 correct_response "/"
	setcycle 20 Match "N"
	setcycle 20 size "L"
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	setcycle 30 Pic "Default"
	setcycle 30 Target "STI/lawnmowertractor.jpg"
	setcycle 30 Probe "我看見一輛停在草地上的除草機"
	setcycle 30 correct_response "/"
	setcycle 30 Match "Y"
	setcycle 30 size "L"
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	setcycle 40 Pic "Roated"
	setcycle 40 Target "STI/badmintonracket_r.jpg"
	setcycle 40 Probe "我看見掛在牆上的網球拍"
	setcycle 40 correct_response "/"
	setcycle 40 Match "Y"
	setcycle 40 size "S"
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	setcycle 50 Pic "Default"
	setcycle 50 Target "STI/carrot01.jpg"
	setcycle 50 Probe "我看見剛剛被拔起來的胡蘿蔔"
	setcycle 50 correct_response "/"
	setcycle 50 Match "N"
	setcycle 50 size "S"
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	setcycle 60 Pic "Roated"
	setcycle 60 Target "STI/pictureframe04_r.jpg"
	setcycle 60 Probe "我看見放在櫃子上面的相框"
	setcycle 60 correct_response "/"
	setcycle 60 Match "N"
	setcycle 60 size "S"
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	setcycle 70 Pic "Default"
	setcycle 70 Target "STI/007-allumette_match.GIF"
	setcycle 70 Probe "我看見一支擺在桌面的火柴棒"
	setcycle 70 correct_response "/"
	setcycle 70 Match "Y"
	setcycle 70 size "S"
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	setcycle 80 Pic "D"
	setcycle 80 Target "STI/240-pont_bridge.GIF"
	setcycle 80 Probe "我看見一台出軌的蒸氣火車頭"
	setcycle 80 correct_response "z"
	setcycle 80 Match "D"
	setcycle 80 size "D"
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	run Trial_C

define loop List02_loop_C2
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List02_loop_C3
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List02_loop_C4
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List02_loop_E1
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 4
	set column_order "Probe;Target;Match;correct_response"
	set break_if "never"
	setcycle 0 correct_response "/"
	setcycle 0 Probe ""
	setcycle 0 Target "020-baignoire_bathtub.GIF"
	setcycle 0 Match "N"
	setcycle 1 correct_response "/"
	setcycle 1 Probe ""
	setcycle 1 Target "064-camping-car_camper.GIF"
	setcycle 1 Match "Y"
	setcycle 2 correct_response "z"
	setcycle 2 Probe ""
	setcycle 2 Target "071-bateau_boat.GIF"
	setcycle 2 Match "D"
	setcycle 3 correct_response "z"
	setcycle 3 Probe ""
	setcycle 3 Target "071-bateau_boat.GIF"
	setcycle 3 Match "D"
	run 

define loop List02_loop_E2
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List02_loop_E3
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List02_loop_E4
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List03_loop_C1
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_C"
	set description "Balance = CDAB"
	set cycles 160
	set column_order "Probe;Target;Match;size;Pic;correct_response"
	set break_if "never"
	setcycle 0 Pic "Default"
	setcycle 0 Target "STI/020-baignoire_bathtub.GIF"
	setcycle 0 Probe "我看到一個下墜中的浴缸"
	setcycle 0 correct_response "/"
	setcycle 0 Match "N"
	setcycle 0 size "L"
	setcycle 1 Pic "Default"
	setcycle 1 Target "STI/couch.jpg"
	setcycle 1 Probe "我看見被丟在路上的一組雙人沙發"
	setcycle 1 correct_response "/"
	setcycle 1 Match "N"
	setcycle 1 size "L"
	setcycle 2 Pic "Default"
	setcycle 2 Target "STI/rocker.jpg"
	setcycle 2 Probe "我看見擺在垃圾堆高處的搖椅"
	setcycle 2 correct_response "/"
	setcycle 2 Match "N"
	setcycle 2 size "L"
	setcycle 3 Pic "Default"
	setcycle 3 Target "STI/178-locomotive_locomotive.GIF"
	setcycle 3 Probe "我看見一輛駛向高山的蒸氣火車頭"
	setcycle 3 correct_response "/"
	setcycle 3 Match "N"
	setcycle 3 size "L"
	setcycle 4 Pic "Default"
	setcycle 4 Target "STI/008-ambulance_ambulance.GIF"
	setcycle 4 Probe "我看見一輛車頭朝地面翻覆的救護車"
	setcycle 4 correct_response "/"
	setcycle 4 Match "N"
	setcycle 4 size "L"
	setcycle 5 Pic "Default"
	setcycle 5 Target "STI/064-camping-car_camper.GIF"
	setcycle 5 Probe "我看見一輛翻倒山崖下的露營車"
	setcycle 5 correct_response "/"
	setcycle 5 Match "N"
	setcycle 5 size "L"
	setcycle 6 Pic "Default"
	setcycle 6 Target "STI/018-car_bus.GIF"
	setcycle 6 Probe "我看見一輛懸掛在峭壁上的大巴士"
	setcycle 6 correct_response "/"
	setcycle 6 Match "N"
	setcycle 6 size "L"
	setcycle 7 Pic "Default"
	setcycle 7 Target "STI/car.jpg"
	setcycle 7 Probe "我看見一台四輪朝天的轎車"
	setcycle 7 correct_response "/"
	setcycle 7 Match "N"
	setcycle 7 size "L"
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	setcycle 10 Pic "Roated"
	setcycle 10 Target "STI/plane_r.jpg"
	setcycle 10 Probe "我看見一台準備起飛的飛機"
	setcycle 10 correct_response "/"
	setcycle 10 Match "N"
	setcycle 10 size "L"
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	setcycle 20 Pic "Default"
	setcycle 20 Target "STI/cementtruck.jpg"
	setcycle 20 Probe "我看見一輛迎面而來的水泥攪伴車"
	setcycle 20 correct_response "/"
	setcycle 20 Match "Y"
	setcycle 20 size "L"
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	setcycle 30 Pic "Roated"
	setcycle 30 Target "STI/lawnmowertractor_r.jpg"
	setcycle 30 Probe "我看見一輛底部朝天的除草機"
	setcycle 30 correct_response "/"
	setcycle 30 Match "Y"
	setcycle 30 size "L"
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	setcycle 40 Pic "Default"
	setcycle 40 Target "STI/badmintonracket.jpg"
	setcycle 40 Probe "我看見掛在牆上的網球拍"
	setcycle 40 correct_response "/"
	setcycle 40 Match "N"
	setcycle 40 size "S"
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	setcycle 50 Pic "Roated"
	setcycle 50 Target "STI/carrot01_r.jpg"
	setcycle 50 Probe "我看見放在菜架上的胡蘿蔔"
	setcycle 50 correct_response "/"
	setcycle 50 Match "N"
	setcycle 50 size "S"
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	setcycle 60 Pic "Default"
	setcycle 60 Target "STI/pictureframe04.jpg"
	setcycle 60 Probe "我看見放在櫃子上面的相框"
	setcycle 60 correct_response "/"
	setcycle 60 Match "Y"
	setcycle 60 size "S"
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	setcycle 70 Pic "Roated"
	setcycle 70 Target "STI/007-allumette_match_r.jpg"
	setcycle 70 Probe "我看見一支別人手裡拿的火柴棒"
	setcycle 70 correct_response "/"
	setcycle 70 Match "Y"
	setcycle 70 size "S"
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	setcycle 80 Pic "D"
	setcycle 80 Target "STI/240-pont_bridge.GIF"
	setcycle 80 Probe "我看見一台出軌的蒸氣火車頭"
	setcycle 80 correct_response "z"
	setcycle 80 Match "D"
	setcycle 80 size "D"
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	run Trial_C

define loop List03_loop_C2
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List03_loop_C3
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List03_loop_C4
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List03_loop_E1
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 4
	set column_order "Probe;Target;Match;correct_response"
	set break_if "never"
	setcycle 0 correct_response "/"
	setcycle 0 Probe ""
	setcycle 0 Target "020-baignoire_bathtub.GIF"
	setcycle 0 Match "N"
	setcycle 1 correct_response "/"
	setcycle 1 Probe ""
	setcycle 1 Target "064-camping-car_camper.GIF"
	setcycle 1 Match "Y"
	setcycle 2 correct_response "z"
	setcycle 2 Probe ""
	setcycle 2 Target "071-bateau_boat.GIF"
	setcycle 2 Match "D"
	setcycle 3 correct_response "z"
	setcycle 3 Probe ""
	setcycle 3 Target "071-bateau_boat.GIF"
	setcycle 3 Match "D"
	run 

define loop List03_loop_E2
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List03_loop_E3
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List03_loop_E4
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List04_loop_C1
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_C"
	set description "Balance = DABC"
	set cycles 160
	set column_order "Probe;Target;Match;size;Pic;correct_response"
	set break_if "never"
	setcycle 0 Pic "Roated"
	setcycle 0 Target "STI/020-baignoire_bathtub_r.jpg"
	setcycle 0 Probe "我看見一個沒裝水的浴缸"
	setcycle 0 correct_response "/"
	setcycle 0 Match "N"
	setcycle 0 size "L"
	setcycle 1 Pic "Roated"
	setcycle 1 Target "STI/couch_r.jpg"
	setcycle 1 Probe "我看見家俱店櫥窗裡的一組雙人沙發"
	setcycle 1 correct_response "/"
	setcycle 1 Match "N"
	setcycle 1 size "L"
	setcycle 2 Pic "Roated"
	setcycle 2 Target "STI/rocker_r.jpg"
	setcycle 2 Probe "我看見一個沒人坐的搖椅"
	setcycle 2 correct_response "/"
	setcycle 2 Match "N"
	setcycle 2 size "L"
	setcycle 3 Pic "Roated"
	setcycle 3 Target "STI/178-locomotive_locomotive_r.jpg"
	setcycle 3 Probe "我看見一輛進站中的蒸氣火車頭"
	setcycle 3 correct_response "/"
	setcycle 3 Match "N"
	setcycle 3 size "L"
	setcycle 4 Pic "Roated"
	setcycle 4 Target "STI/008-ambulance_ambulance_r.jpg"
	setcycle 4 Probe "我看見一輛載著病患的救護車"
	setcycle 4 correct_response "/"
	setcycle 4 Match "N"
	setcycle 4 size "L"
	setcycle 5 Pic "Roated"
	setcycle 5 Target "STI/064-camping-car_camper_r.jpg"
	setcycle 5 Probe "我看見一輛開往目的地的露營車"
	setcycle 5 correct_response "/"
	setcycle 5 Match "N"
	setcycle 5 size "L"
	setcycle 6 Pic "Roated"
	setcycle 6 Target "STI/018-car_bus_r.jpg"
	setcycle 6 Probe "我看見一輛準備發動的大巴士"
	setcycle 6 correct_response "/"
	setcycle 6 Match "N"
	setcycle 6 size "L"
	setcycle 7 Pic "Roated"
	setcycle 7 Target "STI/car_r.jpg"
	setcycle 7 Probe "我看見一台氣派的轎車"
	setcycle 7 correct_response "/"
	setcycle 7 Match "N"
	setcycle 7 size "L"
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	setcycle 10 Pic "Default"
	setcycle 10 Target "STI/plane.jpg"
	setcycle 10 Probe "我看見一台準備起飛的飛機"
	setcycle 10 correct_response "/"
	setcycle 10 Match "Y"
	setcycle 10 size "L"
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	setcycle 20 Pic "Roated"
	setcycle 20 Target "STI/cementtruck_r.jpg"
	setcycle 20 Probe "我看一輛四輪朝天的水泥攪拌車"
	setcycle 20 correct_response "/"
	setcycle 20 Match "Y"
	setcycle 20 size "L"
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	setcycle 30 Pic "Default"
	setcycle 30 Target "STI/lawnmowertractor.jpg"
	setcycle 30 Probe "我看見一輛底部朝天的除草機"
	setcycle 30 correct_response "/"
	setcycle 30 Match "N"
	setcycle 30 size "L"
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	setcycle 40 Pic "Roated"
	setcycle 40 Target "STI/badmintonracket_r.jpg"
	setcycle 40 Probe "我看見球員握在手中的羽球拍"
	setcycle 40 correct_response "/"
	setcycle 40 Match "N"
	setcycle 40 size "S"
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	setcycle 50 Pic "Default"
	setcycle 50 Target "STI/carrot01.jpg"
	setcycle 50 Probe "我看見放在菜架上的胡蘿蔔"
	setcycle 50 correct_response "/"
	setcycle 50 Match "Y"
	setcycle 50 size "S"
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	setcycle 60 Pic "Roated"
	setcycle 60 Target "STI/pictureframe04_r.jpg"
	setcycle 60 Probe "我看見收在抽屜裡的相框"
	setcycle 60 correct_response "/"
	setcycle 60 Match "Y"
	setcycle 60 size "S"
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	setcycle 70 Pic "Default"
	setcycle 70 Target "STI/007-allumette_match.GIF"
	setcycle 70 Probe "我看見一支別人手裡拿的火柴棒"
	setcycle 70 correct_response "/"
	setcycle 70 Match "N"
	setcycle 70 size "S"
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	setcycle 80 Pic "D"
	setcycle 80 Target "STI/240-pont_bridge.GIF"
	setcycle 80 Probe "我看見一台出軌的蒸氣火車頭"
	setcycle 80 correct_response "z"
	setcycle 80 Match "D"
	setcycle 80 size "D"
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	run Trial_C

define loop List04_loop_C2
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List04_loop_C3
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List04_loop_C4
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List04_loop_E1
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 4
	set column_order "Probe;Target;Match;correct_response"
	set break_if "never"
	setcycle 0 correct_response "/"
	setcycle 0 Probe ""
	setcycle 0 Target "020-baignoire_bathtub.GIF"
	setcycle 0 Match "N"
	setcycle 1 correct_response "/"
	setcycle 1 Probe ""
	setcycle 1 Target "064-camping-car_camper.GIF"
	setcycle 1 Match "Y"
	setcycle 2 correct_response "z"
	setcycle 2 Probe ""
	setcycle 2 Target "071-bateau_boat.GIF"
	setcycle 2 Match "D"
	setcycle 3 correct_response "z"
	setcycle 3 Probe ""
	setcycle 3 Target "071-bateau_boat.GIF"
	setcycle 3 Match "D"
	run 

define loop List04_loop_E2
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List04_loop_E3
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List04_loop_E4
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define form_text_display List_Selection_cond1_C
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>練習完成，準備開始正式實驗</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=列表1 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=列表2 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=列表3 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=列表4 var=List4


define form_text_display List_Selection_cond1_E
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>End of Practic. Ready to Start Experimental Session</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=LIST01 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=LIST02 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=LIST03 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=LIST04 var=List4


define form_text_display List_Selection_cond2_C
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>練習完成，準備開始正式實驗</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=列表1 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=列表2 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=列表3 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=列表4 var=List4


define form_text_display List_Selection_cond2_E
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>End of Practic. Ready to Start Experimental Session</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=LIST01 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=LIST02 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=LIST03 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=LIST04 var=List4


define form_text_display List_Selection_cond3_C
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>練習完成，準備開始正式實驗</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=列表1 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=列表2 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=列表3 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=列表4 var=List4


define form_text_display List_Selection_cond3_E
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>End of Practic. Ready to Start Experimental Session</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=LIST01 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=LIST02 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=LIST03 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=LIST04 var=List4


define form_text_display List_Selection_cond4_C
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>練習完成，準備開始正式實驗</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=列表1 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=列表2 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=列表3 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=列表4 var=List4


define form_text_display List_Selection_cond4_E
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>End of Practic. Ready to Start Experimental Session</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=LIST01 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=LIST02 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=LIST03 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=LIST04 var=List4


define sequence Prac_seq_C
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run 1st_Observe_Prac_loop_C "[condition1]='yes'"
	run 1st_Move_Prac_loop_C "[condition2]='yes'"
	run 3rd_Move_Prac_loop_C "[condition4]='yes'"
	run 3rd_Observe_Prac_loop_C "[condition3]='yes'"

define sequence Prac_seq_E
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run 1st_Observe_Prac_loop_E "[condition1]='yes'"
	run 1st_Move_Prac_loop_E "[condition2]='yes'"
	run 3rd_Observe_Prac_loop_E "[condition3]='yes'"
	run 3rd_Move_Prac_loop_E "[condition4]='yes'"

define sketchpad Probe
	set duration "keypress"
	set description "Displays stimuli sentence"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text="[Probe]" x=0 y=0 z_index=0

define sketchpad Second_Fixation
	set duration 500
	set description "Displays Second Fixation"
	draw fixdot color="#ffffff" show_if=always style=default x=0 y=0 z_index=0

define sketchpad Start_C
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="練習結束。請按任意鍵開始正式實驗。" x=0 y=0 z_index=0

define sketchpad Start_E
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="End of practice. Press any key to start." x=0 y=0 z_index=0

define sketchpad Target
	set duration 0
	set description "Displays target picture"
	draw image center=1 file="[Target]" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response Target_response
	set timeout 1500
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "z;/"

define sketchpad Target_response_correct
	set duration 500
	set description "Correct Feedback"
	draw textline center=1 color="#00aa00" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=答對了 x=0 y=0 z_index=0

define sketchpad Target_response_noans
	set duration 500
	set description "No Answer Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=不正常按鍵 x=0 y=0 z_index=0

define sketchpad Target_response_wrong
	set duration 500
	set description "Wrong Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=答錯了 x=0 y=0 z_index=0

define feedback Trial_Break
	set reset_variables "yes"
	set duration "keypress"
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=休息一下 x=0 y=-96 z_index=0

define sequence Trial_C
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run First_Fixation always
	run Probe always
	run Second_Fixation always
	run Target always
	run Target_response always
	run Target_response_correct "[correct]=1"
	run Target_response_wrong "[correct]=0"
	run Target_response_noans "[response_time]<151 or [response_time]>1499"
	run Trial_logger always
	run Trial_Break "=self.get('count_Trial_C') % 40 == 39"

define logger Trial_logger
	set description "Logs experimental data"
	set auto_log "yes"

define sketchpad Welcome_C
	set duration "keypress"
	set description "First Instruction"
	draw textline center=1 color=white font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=句圖比對作業 x=0 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text=判斷最後的圖片是否為句子裡提到的物件 x=0 y=-128 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text=按鍵時限只有兩秒鐘 x=0 y=-64 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text=請確認沒有問題之後按鍵開始任務 x=0 y=64 z_index=0

define sketchpad Welcome_E
	set duration "keypress"
	set description "First Instruction"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Sentence Picture Verification" x=0 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Verify the picture of object mentioned in the sentence" x=0 y=-128 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="You have two seconds to make response" x=0 y=-64 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Press space bar to start" x=0 y=64 z_index=0

