---
API: 2
OpenSesame: 3.0.5
Platform: nt
---
set width 1024
set uniform_coordinates "yes"
set title "Simulation2016_EXP01"
set subject_parity "even"
set subject_nr 0
set start "EXP01"
set sampler_backend "legacy"
set mouse_backend "xpyriment"
set keyboard_backend "legacy"
set height 768
set foreground "white"
set font_size 18
set font_italic "no"
set font_family "chinese-japanese-korean"
set font_bold "no"
set experiment_path "C:/Users/60941sch/EXPs/SIM2016"
set description "Matching Tasks"
set coordinates "uniform"
set compensation 0
set color_backend "legacy"
set clock_backend "legacy"
set canvas_backend "xpyriment"
set bidi "yes"
set background "black"

define loop 1st_Move_Prac_loop_C
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_C"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_C

define loop 1st_Move_Prac_loop_E
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_E

define sequence 1st_Move_seq_C
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run List_Selection_cond2_C always
	run List01_loop_C2 "[List1] = 'yes'"
	run List02_loop_C2 "[List2] = 'yes'"
	run List03_loop_C2 "[List3] = 'yes'"
	run List04_loop_C2 "[List4] = 'yes'"

define sequence 1st_Move_seq_E
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run List_Selection_cond2_E always
	run List01_loop_E2 "[List1] = 'yes'"
	run List02_loop_E2 "[List2] = 'yes'"
	run List03_loop_E2 "[List3] = 'yes'"
	run List04_loop_E2 "[List4] = 'yes'"

define loop 1st_Observe_Prac_loop_C
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_C"
	set description "Repeatedly runs another item"
	set cycles 4
	set column_order "Probe;Target;correct_response"
	set break_if "never"
	setcycle 0 correct_response "/"
	setcycle 0 Probe "我看 到放滿東西的桌子"
	setcycle 0 Target "STI/Prac-01.jpg"
	setcycle 1 correct_response "/"
	setcycle 1 Probe "我看到玻璃做的花瓶"
	setcycle 1 Target "STI/Prac-02.jpg"
	setcycle 2 correct_response "z"
	setcycle 2 Probe "我看到沒人吃過的餅乾"
	setcycle 2 Target "STI/Prac-03.jpg"
	setcycle 3 correct_response "z"
	setcycle 3 Probe "我看到要清洗的盤子"
	setcycle 3 Target "STI/Prac-04.jpg"
	run Trial_C

define loop 1st_Observe_Prac_loop_E
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Repeatedly runs another item"
	set cycles 4
	set column_order "Probe;Target;correct_response"
	set break_if "never"
	setcycle 0 correct_response "/"
	setcycle 0 Probe "I see the table filled with stuff."
	setcycle 0 Target "STI/Prac-01.jpg"
	setcycle 1 correct_response "/"
	setcycle 1 Probe "I see the galss vase."
	setcycle 1 Target "STI/Prac-02.jpg"
	setcycle 2 correct_response "z"
	setcycle 2 Probe "I see the unpacked cokkies."
	setcycle 2 Target "STI/Prac-03.jpg"
	setcycle 3 correct_response "z"
	setcycle 3 Probe "I see the dirty dish."
	setcycle 3 Target "STI/Prac-04.jpg"
	run Trial_E

define sequence 1st_Observe_seq_C
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run List_Selection_cond1_C always
	run Ready_C always
	run List01_loop_C1 "[List1] = 'yes'"
	run List02_loop_C1 "[List2] = 'yes'"
	run List03_loop_C1 "[List3] = 'yes'"
	run List04_loop_C1 "[List4] = 'yes'"

define sequence 1st_Observe_seq_E
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run List_Selection_cond1_E always
	run Ready_E always
	run List01_loop_E1 "[List1] = 'yes'"
	run List02_loop_E1 "[List2] = 'yes'"
	run List03_loop_E1 "[List3] = 'yes'"
	run List04_loop_E1 "[List4] = 'yes'"

define loop 3rd_Move_Prac_loop_C
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_C"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_C

define loop 3rd_Move_Prac_loop_E
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_E

define sequence 3rd_Move_seq_C
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run List_Selection_cond4_C always
	run List01_loop_C3 always
	run List02_loop_C3 always
	run List03_loop_C3 always
	run List04_loop_C3 always

define sequence 3rd_Move_seq_E
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run List_Selection_cond4_E always
	run List01_loop_E4 "[List1] = 'yes'"
	run List02_loop_E4 "[List2] = 'yes'"
	run List03_loop_E4 "[List3] = 'yes'"
	run List04_loop_E4 "[List4] = 'yes'"

define loop 3rd_Observe_Prac_loop_C
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_C"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_C

define loop 3rd_Observe_Prac_loop_E
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_E

define sequence 3rd_Observe_seq_C
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run List_Selection_cond3_C always
	run List01_loop_C4 always
	run List02_loop_C4 always
	run List03_loop_C4 always
	run List04_loop_C4 always

define sequence 3rd_Observe_seq_E
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run List_Selection_cond3_E always
	run List01_loop_E3 "[List1] = 'yes'"
	run List02_loop_E3 "[List2] = 'yes'"
	run List03_loop_E3 "[List3] = 'yes'"
	run List04_loop_E3 "[List4] = 'yes'"

define sequence Afer_Experiment
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run Q1 always
	run Response_Q1 always
	run Trial_logger_E always
	run Q2 always
	run Response_Q2 always
	run Trial_logger_E always
	run Q3 always
	run Response_Q3 always
	run Trial_logger_E always
	run Q4 always

define sequence Chinese
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run Condition_Selection_C always
	run Welcome_C always
	run Prac_seq_C always
	run Start_C always
	run 1st_Observe_seq_C "[condition1]='yes'"
	run 1st_Move_seq_C "[condition2]='yes'"
	run 3rd_Observe_seq_C "[condition3]='yes'"
	run 3rd_Move_seq_C "[condition4]='yes'"
	run End_C always

define form_text_display Condition_Selection_C
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>選擇實驗情況</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=第一觀 var=condition1
	widget 1 1 1 1 button center=yes frame=yes text="第一動(準備中)" var=condition2
	widget 0 2 1 1 button center=yes frame=yes text="第三觀(準備中)" var=condition3
	widget 1 2 1 1 button center=yes frame=yes text="第三動(準備中)" var=condition4


define form_text_display Condition_Selection_E
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>Select a Condition</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=1st_Observe var=condition1
	widget 1 1 1 1 button center=yes frame=yes text="1st_Move(Preparing)" var=condition2
	widget 0 2 1 1 button center=yes frame=yes text="3rd_Observe(Preparing)" var=condition3
	widget 1 2 1 1 button center=yes frame=yes text="3rd_Move(Preparing)" var=condition4


define sequence EXP01
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run Language_Selection always
	run Chinese "[language1]='yes'"
	run English "[language2]='yes'"

define sketchpad End_C
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="實驗結束。請通知實驗者。" x=0 y=0 z_index=0

define sketchpad End_E
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="End of Experiment<br /><br />Before leave LAB. <br />Please answer four questions.<br /><br /><br />Press SPACE to quetions." x=0 y=0 z_index=0

define sequence English
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run Condition_Selection_E always
	run Welcome_E always
	run Prac_seq_E always
	run Start_E always
	run 1st_Observe_seq_E "[condition1]='yes'"
	run 1st_Move_seq_E "[condition2]='yes'"
	run 3rd_Observe_seq_E "[condition4]='yes'"
	run 3rd_Move_seq_E "[condition3]='yes'"
	run End_E always
	run Afer_Experiment always

define sketchpad First_Fixation_C
	set duration 1000
	set description "Displays Initial Fixation"
	draw fixdot color="#ffff00" show_if=always style=default x=-304 y=0 z_index=0

define sketchpad First_Fixation_E
	set duration 1000
	set description "Displays Initial Fixation"
	draw fixdot color="#ffff00" show_if=always style=default x=-432 y=0 z_index=0

define form_text_display Language_Selection
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>請選擇語言  Choose Language</span>"
	__form_text__
	執行中文實驗請按"中文"
	Press "English" if you are going to run English
	__end__
	set description "A simple text display form"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 1 1 button center=yes frame=yes text=中文 var=language1
	widget 1 2 1 1 button center=yes frame=yes text=English var=language2


define loop List01_loop_C1
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_C"
	set description "Balance = ABCD"
	set cycles 160
	set column_order "Probe;Target;Match;size;Pic;correct_response"
	set break_if "never"
	setcycle 0 Probe "我看見沒裝水的浴缸"
	setcycle 0 Target "STI/020-baignoire_bathtub.jpg"
	setcycle 0 Pic "D"
	setcycle 0 correct_response "/"
	setcycle 0 Match "Y"
	setcycle 0 size "L"
	setcycle 1 Probe "我看見家俱店櫥窗裡的一組雙人沙發"
	setcycle 1 Target "STI/couch.jpg"
	setcycle 1 Pic "D"
	setcycle 1 correct_response "/"
	setcycle 1 Match "Y"
	setcycle 1 size "L"
	setcycle 2 Probe "我看見沒人坐的搖椅"
	setcycle 2 Target "STI/rocker.jpg"
	setcycle 2 Pic "D"
	setcycle 2 correct_response "/"
	setcycle 2 Match "Y"
	setcycle 2 size "L"
	setcycle 3 Probe "我看見一輛進站中的蒸氣火車頭"
	setcycle 3 Target "STI/178-locomotive_locomotive.jpg"
	setcycle 3 Pic "D"
	setcycle 3 correct_response "/"
	setcycle 3 Match "Y"
	setcycle 3 size "L"
	setcycle 4 Probe "我看見一輛載著病患的救護車"
	setcycle 4 Target "STI/008-ambulance_ambulance.jpg"
	setcycle 4 Pic "D"
	setcycle 4 correct_response "/"
	setcycle 4 Match "Y"
	setcycle 4 size "L"
	setcycle 5 Probe "我看見一輛開往目的地的露營車"
	setcycle 5 Target "STI/064-camping-car_camper.jpg"
	setcycle 5 Pic "D"
	setcycle 5 correct_response "/"
	setcycle 5 Match "Y"
	setcycle 5 size "L"
	setcycle 6 Probe "我看見一輛準備發動的大巴士"
	setcycle 6 Target "STI/018-car_bus.jpg"
	setcycle 6 Pic "D"
	setcycle 6 correct_response "/"
	setcycle 6 Match "Y"
	setcycle 6 size "L"
	setcycle 7 Probe "我看見一台停在路邊的氣派轎車"
	setcycle 7 Target "STI/car.jpg"
	setcycle 7 Pic "D"
	setcycle 7 correct_response "/"
	setcycle 7 Match "Y"
	setcycle 7 size "L"
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	setcycle 10 Probe "我看見一台準備起飛的飛機"
	setcycle 10 Target "STI/plane_r.jpg"
	setcycle 10 Pic "R"
	setcycle 10 correct_response "/"
	setcycle 10 Match "Y"
	setcycle 10 size "L"
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	setcycle 20 Probe "我看一輛四輪朝天的水泥攪拌車"
	setcycle 20 Target "STI/cementtruck.jpg"
	setcycle 20 Pic "D"
	setcycle 20 correct_response "/"
	setcycle 20 Match "N"
	setcycle 20 size "L"
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	setcycle 30 Probe "我看見一輛停在草地上的除草機"
	setcycle 30 Target "STI/lawnmowertractor_r.jpg"
	setcycle 30 Pic "R"
	setcycle 30 correct_response "/"
	setcycle 30 Match "N"
	setcycle 30 size "L"
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	setcycle 40 Probe "我看見球員握在手中的羽球拍"
	setcycle 40 Target "STI/badmintonracket.jpg"
	setcycle 40 Pic "D"
	setcycle 40 correct_response "/"
	setcycle 40 Match "Y"
	setcycle 40 size "S"
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	setcycle 50 Probe "我看見剛剛被拔起來的胡蘿蔔"
	setcycle 50 Target "STI/carrot01_r.jpg"
	setcycle 50 Pic "R"
	setcycle 50 correct_response "/"
	setcycle 50 Match "Y"
	setcycle 50 size "S"
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	setcycle 60 Probe "我看見收在抽屜裡的相框"
	setcycle 60 Target "STI/pictureframe04.jpg"
	setcycle 60 Pic "D"
	setcycle 60 correct_response "/"
	setcycle 60 Match "N"
	setcycle 60 size "S"
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	setcycle 70 Probe "我看見一支擺在桌面的火柴棒"
	setcycle 70 Target "STI/007-allumette_match_r.jpg"
	setcycle 70 Pic "R"
	setcycle 70 correct_response "/"
	setcycle 70 Match "N"
	setcycle 70 size "S"
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	setcycle 80 Probe "我看見一台出軌的火車車廂"
	setcycle 80 Target "STI/240-pont_bridge.jpg"
	setcycle 80 Pic "P"
	setcycle 80 correct_response "z"
	setcycle 80 Match "D"
	setcycle 80 size "D"
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	run Trial_C

define loop List01_loop_C2
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List01_loop_C3
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List01_loop_C4
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List01_loop_E1
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Balance = ABCD"
	set cycles 160
	set column_order "Probe;Target;Match;size;Pic;correct_response"
	set break_if "never"
	setcycle 0 Probe "I see the empty bathtub."
	setcycle 0 Target "STI/020-baignoire_bathtub.jpg"
	setcycle 0 Pic "D"
	setcycle 0 correct_response "/"
	setcycle 0 Match "Y"
	setcycle 0 size "L"
	setcycle 1 Probe "I see the couch through the window of the furniture store."
	setcycle 1 Target "STI/couch.jpg"
	setcycle 1 Pic "D"
	setcycle 1 correct_response "/"
	setcycle 1 Match "Y"
	setcycle 1 size "L"
	setcycle 2 Probe "I see the rocking chair in the living room."
	setcycle 2 Target "STI/rocker.jpg"
	setcycle 2 Pic "D"
	setcycle 2 correct_response "/"
	setcycle 2 Match "Y"
	setcycle 2 size "L"
	setcycle 3 Probe "I see the steam locomotive that is heading toward the train station."
	setcycle 3 Target "STI/178-locomotive_locomotive.jpg"
	setcycle 3 Pic "D"
	setcycle 3 correct_response "/"
	setcycle 3 Match "Y"
	setcycle 3 size "L"
	setcycle 4 Probe "I see the ambulance that is carrying the patient to the hospital."
	setcycle 4 Target "STI/008-ambulance_ambulance.jpg"
	setcycle 4 Pic "D"
	setcycle 4 correct_response "/"
	setcycle 4 Match "Y"
	setcycle 4 size "L"
	setcycle 5 Probe "I see the camper that is driving toward the campgrounds."
	setcycle 5 Target "STI/064-camping-car_camper.jpg"
	setcycle 5 Pic "D"
	setcycle 5 correct_response "/"
	setcycle 5 Match "Y"
	setcycle 5 size "L"
	setcycle 6 Probe "I see the bus that is leaving the bus stop."
	setcycle 6 Target "STI/018-car_bus.jpg"
	setcycle 6 Pic "D"
	setcycle 6 correct_response "/"
	setcycle 6 Match "Y"
	setcycle 6 size "L"
	setcycle 7 Probe "I see the fabulous car that is running on the road."
	setcycle 7 Target "STI/car.jpg"
	setcycle 7 Pic "D"
	setcycle 7 correct_response "/"
	setcycle 7 Match "Y"
	setcycle 7 size "L"
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	setcycle 10 Probe "I see the plane that is taking off from the runway."
	setcycle 10 Target "STI/plane_r.jpg"
	setcycle 10 Pic "R"
	setcycle 10 correct_response "/"
	setcycle 10 Match "Y"
	setcycle 10 size "L"
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	setcycle 20 Probe "I see the cement mixer overturned on the crossroad because of the car accident."
	setcycle 20 Target "STI/cementtruck.jpg"
	setcycle 20 Pic "D"
	setcycle 20 correct_response "/"
	setcycle 20 Match "N"
	setcycle 20 size "L"
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	setcycle 30 Probe "I see the lawn mower that is stopped on the grass."
	setcycle 30 Target "STI/lawnmowertractor_r.jpg"
	setcycle 30 Pic "R"
	setcycle 30 correct_response "/"
	setcycle 30 Match "N"
	setcycle 30 size "L"
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	setcycle 40 Probe "I see the tennis racket that is hold by the player."
	setcycle 40 Target "STI/badmintonracket.jpg"
	setcycle 40 Pic "D"
	setcycle 40 correct_response "/"
	setcycle 40 Match "Y"
	setcycle 40 size "S"
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	setcycle 50 Probe "I see the carrots just plucked by the farmer."
	setcycle 50 Target "STI/carrot01_r.jpg"
	setcycle 50 Pic "R"
	setcycle 50 correct_response "/"
	setcycle 50 Match "Y"
	setcycle 50 size "S"
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	setcycle 60 Probe "I see the frame left in the drawer."
	setcycle 60 Target "STI/pictureframe04.jpg"
	setcycle 60 Pic "D"
	setcycle 60 correct_response "/"
	setcycle 60 Match "N"
	setcycle 60 size "S"
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	setcycle 70 Probe "I see the match stick left on the table."
	setcycle 70 Target "STI/007-allumette_match_r.jpg"
	setcycle 70 Pic "R"
	setcycle 70 correct_response "/"
	setcycle 70 Match "N"
	setcycle 70 size "S"
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	setcycle 80 Probe "I see the train that is driving outside the rail road."
	setcycle 80 Target "STI/240-pont_bridge.jpg"
	setcycle 80 Pic "P"
	setcycle 80 correct_response "z"
	setcycle 80 Match "D"
	setcycle 80 size "D"
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	run Trial_E

define loop List01_loop_E2
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_E

define loop List01_loop_E3
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_E

define loop List01_loop_E4
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_E

define loop List02_loop_C1
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_C"
	set description "Balance = BCDA"
	set cycles 160
	set column_order "Probe;Target;Match;size;Pic;correct_response"
	set break_if "never"
	setcycle 0 Probe "我看到下墜中的浴缸"
	setcycle 0 Target "STI/020-baignoire_bathtub_r.jpg"
	setcycle 0 Pic "R"
	setcycle 0 correct_response "/"
	setcycle 0 Match "Y"
	setcycle 0 size "L"
	setcycle 1 Probe "我看見被推倒的一組雙人沙發"
	setcycle 1 Target "STI/couch_r.jpg"
	setcycle 1 Pic "R"
	setcycle 1 correct_response "/"
	setcycle 1 Match "Y"
	setcycle 1 size "L"
	setcycle 2 Probe "我看見擺在垃圾堆中的搖椅"
	setcycle 2 Target "STI/rocker_r.jpg"
	setcycle 2 Pic "R"
	setcycle 2 correct_response "/"
	setcycle 2 Match "Y"
	setcycle 2 size "L"
	setcycle 3 Probe "我看見一輛爬上高山的蒸氣火車頭"
	setcycle 3 Target "STI/178-locomotive_locomotive_r.jpg"
	setcycle 3 Pic "R"
	setcycle 3 correct_response "/"
	setcycle 3 Match "Y"
	setcycle 3 size "L"
	setcycle 4 Probe "我看見一輛車頭朝地面翻覆的救護車"
	setcycle 4 Target "STI/008-ambulance_ambulance_r.jpg"
	setcycle 4 Pic "R"
	setcycle 4 correct_response "/"
	setcycle 4 Match "Y"
	setcycle 4 size "L"
	setcycle 5 Probe "我看見一輛摔到山崖下的露營車"
	setcycle 5 Target "STI/064-camping-car_camper_r.jpg"
	setcycle 5 Pic "R"
	setcycle 5 correct_response "/"
	setcycle 5 Match "Y"
	setcycle 5 size "L"
	setcycle 6 Probe "我看見一輛懸掛在峭壁上的大巴士"
	setcycle 6 Target "STI/018-car_bus_r.jpg"
	setcycle 6 Pic "R"
	setcycle 6 correct_response "/"
	setcycle 6 Match "Y"
	setcycle 6 size "L"
	setcycle 7 Probe "我看見一台從大橋墜落下來的轎車"
	setcycle 7 Target "STI/car_r.jpg"
	setcycle 7 Pic "R"
	setcycle 7 correct_response "/"
	setcycle 7 Match "Y"
	setcycle 7 size "L"
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	setcycle 10 Probe "我看見一台準備起飛的飛機"
	setcycle 10 Target "STI/plane.jpg"
	setcycle 10 Pic "D"
	setcycle 10 correct_response "/"
	setcycle 10 Match "N"
	setcycle 10 size "L"
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	setcycle 20 Probe "我看見一輛迎面而來的水泥攪伴車"
	setcycle 20 Target "STI/cementtruck_r.jpg"
	setcycle 20 Pic "R"
	setcycle 20 correct_response "/"
	setcycle 20 Match "N"
	setcycle 20 size "L"
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	setcycle 30 Probe "我看見一輛停在草地上的除草機"
	setcycle 30 Target "STI/lawnmowertractor.jpg"
	setcycle 30 Pic "D"
	setcycle 30 correct_response "/"
	setcycle 30 Match "Y"
	setcycle 30 size "L"
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	setcycle 40 Probe "我看見掛在牆上的網球拍"
	setcycle 40 Target "STI/badmintonracket_r.jpg"
	setcycle 40 Pic "R"
	setcycle 40 correct_response "/"
	setcycle 40 Match "Y"
	setcycle 40 size "S"
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	setcycle 50 Probe "我看見剛剛被拔起來的胡蘿蔔"
	setcycle 50 Target "STI/carrot01.jpg"
	setcycle 50 Pic "D"
	setcycle 50 correct_response "/"
	setcycle 50 Match "N"
	setcycle 50 size "S"
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	setcycle 60 Probe "我看見放在櫃子上面的相框"
	setcycle 60 Target "STI/pictureframe04_r.jpg"
	setcycle 60 Pic "R"
	setcycle 60 correct_response "/"
	setcycle 60 Match "N"
	setcycle 60 size "S"
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	setcycle 70 Probe "我看見一支擺在桌面的火柴棒"
	setcycle 70 Target "STI/007-allumette_match.jpg"
	setcycle 70 Pic "D"
	setcycle 70 correct_response "/"
	setcycle 70 Match "Y"
	setcycle 70 size "S"
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	setcycle 80 Probe "我看見一台出軌的火車車廂"
	setcycle 80 Target "STI/240-pont_bridge.jpg"
	setcycle 80 Pic "P"
	setcycle 80 correct_response "z"
	setcycle 80 Match "D"
	setcycle 80 size "D"
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	run Trial_C

define loop List02_loop_C2
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List02_loop_C3
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List02_loop_C4
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List02_loop_E1
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Balance = ABCD"
	set cycles 160
	set column_order "Probe;Target;Match;size;Pic;correct_response"
	set break_if "never"
	setcycle 0 Probe "I see the falling bathtub."
	setcycle 0 Target "STI/020-baignoire_bathtub_r.jpg"
	setcycle 0 Pic "R"
	setcycle 0 correct_response "/"
	setcycle 0 Match "Y"
	setcycle 0 size "L"
	setcycle 1 Probe "I see the couch that was pushed by someone."
	setcycle 1 Target "STI/couch_r.jpg"
	setcycle 1 Pic "R"
	setcycle 1 correct_response "/"
	setcycle 1 Match "Y"
	setcycle 1 size "L"
	setcycle 2 Probe "I see the rocking chair in the garbage heap."
	setcycle 2 Target "STI/rocker_r.jpg"
	setcycle 2 Pic "R"
	setcycle 2 correct_response "/"
	setcycle 2 Match "Y"
	setcycle 2 size "L"
	setcycle 3 Probe "I see the steam locomotive that is climbing the mountain."
	setcycle 3 Target "STI/178-locomotive_locomotive_r.jpg"
	setcycle 3 Pic "R"
	setcycle 3 correct_response "/"
	setcycle 3 Match "Y"
	setcycle 3 size "L"
	setcycle 4 Probe "I see the ambulance overturned on the roadside because of the car accident."
	setcycle 4 Target "STI/008-ambulance_ambulance_r.jpg"
	setcycle 4 Pic "R"
	setcycle 4 correct_response "/"
	setcycle 4 Match "Y"
	setcycle 4 size "L"
	setcycle 5 Probe "I see the camper lifted by the crane from the pit."
	setcycle 5 Target "STI/064-camping-car_camper_r.jpg"
	setcycle 5 Pic "R"
	setcycle 5 correct_response "/"
	setcycle 5 Match "Y"
	setcycle 5 size "L"
	setcycle 6 Probe "I see the bus that is hanging on the cliff."
	setcycle 6 Target "STI/018-car_bus_r.jpg"
	setcycle 6 Pic "R"
	setcycle 6 correct_response "/"
	setcycle 6 Match "Y"
	setcycle 6 size "L"
	setcycle 7 Probe "I see the falling fabulous car."
	setcycle 7 Target "STI/car_r.jpg"
	setcycle 7 Pic "R"
	setcycle 7 correct_response "/"
	setcycle 7 Match "Y"
	setcycle 7 size "L"
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	setcycle 10 Probe "I see the plane that is taking off from the runway."
	setcycle 10 Target "STI/plane.jpg"
	setcycle 10 Pic "D"
	setcycle 10 correct_response "/"
	setcycle 10 Match "Y"
	setcycle 10 size "L"
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	setcycle 20 Probe "I see the cement mixer truck that is coming to me."
	setcycle 20 Target "STI/cementtruck_r.jpg"
	setcycle 20 Pic "R"
	setcycle 20 correct_response "/"
	setcycle 20 Match "N"
	setcycle 20 size "L"
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	setcycle 30 Probe "I see the lawn mower that is stopped on the grass."
	setcycle 30 Target "STI/lawnmowertractor.jpg"
	setcycle 30 Pic "D"
	setcycle 30 correct_response "/"
	setcycle 30 Match "N"
	setcycle 30 size "L"
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	setcycle 40 Probe "I see the tennis racket hanged on the wall."
	setcycle 40 Target "STI/badmintonracket_r.jpg"
	setcycle 40 Pic "R"
	setcycle 40 correct_response "/"
	setcycle 40 Match "Y"
	setcycle 40 size "S"
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	setcycle 50 Probe "I see the carrots just plucked by the farmer."
	setcycle 50 Target "STI/carrot01.jpg"
	setcycle 50 Pic "D"
	setcycle 50 correct_response "/"
	setcycle 50 Match "Y"
	setcycle 50 size "S"
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	setcycle 60 Probe "I see the frame put on the desk."
	setcycle 60 Target "STI/pictureframe04_r.jpg"
	setcycle 60 Pic "R"
	setcycle 60 correct_response "/"
	setcycle 60 Match "N"
	setcycle 60 size "S"
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	setcycle 70 Probe "I see the match stick left on the table."
	setcycle 70 Target "STI/007-allumette_match.jpg"
	setcycle 70 Pic "D"
	setcycle 70 correct_response "/"
	setcycle 70 Match "N"
	setcycle 70 size "S"
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	setcycle 80 Probe "I see the train that is driving outside the rail road."
	setcycle 80 Target "STI/240-pont_bridge.jpg"
	setcycle 80 Pic "P"
	setcycle 80 correct_response "z"
	setcycle 80 Match "D"
	setcycle 80 size "D"
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	run Trial_E

define loop List02_loop_E2
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_E

define loop List02_loop_E3
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_E

define loop List02_loop_E4
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_E

define loop List03_loop_C1
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_C"
	set description "Balance = CDAB"
	set cycles 160
	set column_order "Probe;Target;Match;size;Pic;correct_response"
	set break_if "never"
	setcycle 0 Probe "我看到下墜中的浴缸"
	setcycle 0 Target "STI/020-baignoire_bathtub.jpg"
	setcycle 0 Pic "D"
	setcycle 0 correct_response "/"
	setcycle 0 Match "N"
	setcycle 0 size "L"
	setcycle 1 Probe "我看見被推倒的一組雙人沙發"
	setcycle 1 Target "STI/couch.jpg"
	setcycle 1 Pic "D"
	setcycle 1 correct_response "/"
	setcycle 1 Match "N"
	setcycle 1 size "L"
	setcycle 2 Probe "我看見擺在垃圾堆中的搖椅"
	setcycle 2 Target "STI/rocker.jpg"
	setcycle 2 Pic "D"
	setcycle 2 correct_response "/"
	setcycle 2 Match "N"
	setcycle 2 size "L"
	setcycle 3 Probe "我看見一輛爬上高山的蒸氣火車頭"
	setcycle 3 Target "STI/178-locomotive_locomotive.jpg"
	setcycle 3 Pic "D"
	setcycle 3 correct_response "/"
	setcycle 3 Match "N"
	setcycle 3 size "L"
	setcycle 4 Probe "我看見一輛車頭朝地面翻覆的救護車"
	setcycle 4 Target "STI/008-ambulance_ambulance.jpg"
	setcycle 4 Pic "D"
	setcycle 4 correct_response "/"
	setcycle 4 Match "N"
	setcycle 4 size "L"
	setcycle 5 Probe "我看見一輛摔到山崖下的露營車"
	setcycle 5 Target "STI/064-camping-car_camper.jpg"
	setcycle 5 Pic "D"
	setcycle 5 correct_response "/"
	setcycle 5 Match "N"
	setcycle 5 size "L"
	setcycle 6 Probe "我看見一輛懸掛在峭壁上的大巴士"
	setcycle 6 Target "STI/018-car_bus.jpg"
	setcycle 6 Pic "D"
	setcycle 6 correct_response "/"
	setcycle 6 Match "N"
	setcycle 6 size "L"
	setcycle 7 Probe "我看見一台從大橋墜落下來的轎車"
	setcycle 7 Target "STI/car.jpg"
	setcycle 7 Pic "D"
	setcycle 7 correct_response "/"
	setcycle 7 Match "N"
	setcycle 7 size "L"
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	setcycle 10 Probe "我看見一台準備起飛的飛機"
	setcycle 10 Target "STI/plane_r.jpg"
	setcycle 10 Pic "R"
	setcycle 10 correct_response "/"
	setcycle 10 Match "N"
	setcycle 10 size "L"
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	setcycle 20 Probe "我看見一輛迎面而來的水泥攪伴車"
	setcycle 20 Target "STI/cementtruck.jpg"
	setcycle 20 Pic "D"
	setcycle 20 correct_response "/"
	setcycle 20 Match "Y"
	setcycle 20 size "L"
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	setcycle 30 Probe "我看見一輛被推倒的除草機"
	setcycle 30 Target "STI/lawnmowertractor_r.jpg"
	setcycle 30 Pic "R"
	setcycle 30 correct_response "/"
	setcycle 30 Match "Y"
	setcycle 30 size "L"
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	setcycle 40 Probe "我看見掛在牆上的網球拍"
	setcycle 40 Target "STI/badmintonracket.jpg"
	setcycle 40 Pic "D"
	setcycle 40 correct_response "/"
	setcycle 40 Match "N"
	setcycle 40 size "S"
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	setcycle 50 Probe "我看見放在菜架上的胡蘿蔔"
	setcycle 50 Target "STI/carrot01_r.jpg"
	setcycle 50 Pic "R"
	setcycle 50 correct_response "/"
	setcycle 50 Match "N"
	setcycle 50 size "S"
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	setcycle 60 Probe "我看見放在櫃子上面的相框"
	setcycle 60 Target "STI/pictureframe04.jpg"
	setcycle 60 Pic "D"
	setcycle 60 correct_response "/"
	setcycle 60 Match "Y"
	setcycle 60 size "S"
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	setcycle 70 Probe "我看見她用手指捏住的火柴棒"
	setcycle 70 Target "STI/007-allumette_match_r.jpg"
	setcycle 70 Pic "R"
	setcycle 70 correct_response "/"
	setcycle 70 Match "Y"
	setcycle 70 size "S"
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	setcycle 80 Probe "我看見一台出軌的火車車廂"
	setcycle 80 Target "STI/240-pont_bridge.jpg"
	setcycle 80 Pic "P"
	setcycle 80 correct_response "z"
	setcycle 80 Match "D"
	setcycle 80 size "D"
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	run Trial_C

define loop List03_loop_C2
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List03_loop_C3
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List03_loop_C4
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List03_loop_E1
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Balance = ABCD"
	set cycles 160
	set column_order "Probe;Target;Match;size;Pic;correct_response"
	set break_if "never"
	setcycle 0 Probe "I see the falling bathtub."
	setcycle 0 Target "STI/020-baignoire_bathtub.jpg"
	setcycle 0 Pic "D"
	setcycle 0 correct_response "/"
	setcycle 0 Match "Y"
	setcycle 0 size "L"
	setcycle 1 Probe "I see the couch that was pushed by someone."
	setcycle 1 Target "STI/couch.jpg"
	setcycle 1 Pic "D"
	setcycle 1 correct_response "/"
	setcycle 1 Match "Y"
	setcycle 1 size "L"
	setcycle 2 Probe "I see the rocking chair in the garbage heap."
	setcycle 2 Target "STI/rocker.jpg"
	setcycle 2 Pic "D"
	setcycle 2 correct_response "/"
	setcycle 2 Match "Y"
	setcycle 2 size "L"
	setcycle 3 Probe "I see the steam locomotive that is climbing the mountain."
	setcycle 3 Target "STI/178-locomotive_locomotive.jpg"
	setcycle 3 Pic "D"
	setcycle 3 correct_response "/"
	setcycle 3 Match "Y"
	setcycle 3 size "L"
	setcycle 4 Probe "I see the ambulance overturned on the roadside because of the car accident."
	setcycle 4 Target "STI/008-ambulance_ambulance.jpg"
	setcycle 4 Pic "D"
	setcycle 4 correct_response "/"
	setcycle 4 Match "Y"
	setcycle 4 size "L"
	setcycle 5 Probe "I see the camper lifted by the crane from the pit."
	setcycle 5 Target "STI/064-camping-car_camper.jpg"
	setcycle 5 Pic "D"
	setcycle 5 correct_response "/"
	setcycle 5 Match "Y"
	setcycle 5 size "L"
	setcycle 6 Probe "I see the bus that is hanging on the cliff."
	setcycle 6 Target "STI/018-car_bus.jpg"
	setcycle 6 Pic "D"
	setcycle 6 correct_response "/"
	setcycle 6 Match "Y"
	setcycle 6 size "L"
	setcycle 7 Probe "I see the falling fabulous car."
	setcycle 7 Target "STI/car.jpg"
	setcycle 7 Pic "D"
	setcycle 7 correct_response "/"
	setcycle 7 Match "Y"
	setcycle 7 size "L"
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	setcycle 10 Probe "I see the plane that is running on the runway."
	setcycle 10 Target "STI/plane_r.jpg"
	setcycle 10 Pic "R"
	setcycle 10 correct_response "/"
	setcycle 10 Match "Y"
	setcycle 10 size "L"
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	setcycle 20 Probe "I see the cement mixer truck that is coming to me."
	setcycle 20 Target "STI/cementtruck.jpg"
	setcycle 20 Pic "D"
	setcycle 20 correct_response "/"
	setcycle 20 Match "N"
	setcycle 20 size "L"
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	setcycle 30 Probe "I see the lawn mower that is pushed by someone."
	setcycle 30 Target "STI/lawnmowertractor_r.jpg"
	setcycle 30 Pic "R"
	setcycle 30 correct_response "/"
	setcycle 30 Match "N"
	setcycle 30 size "L"
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	setcycle 40 Probe "I see the tennis racket hanged on the wall."
	setcycle 40 Target "STI/badmintonracket.jpg"
	setcycle 40 Pic "D"
	setcycle 40 correct_response "/"
	setcycle 40 Match "Y"
	setcycle 40 size "S"
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	setcycle 50 Probe "I see the carrots on the shelf in the supermarket."
	setcycle 50 Target "STI/carrot01_r.jpg"
	setcycle 50 Pic "R"
	setcycle 50 correct_response "/"
	setcycle 50 Match "Y"
	setcycle 50 size "S"
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	setcycle 60 Probe "I see the frame put on the desk."
	setcycle 60 Target "STI/pictureframe04.jpg"
	setcycle 60 Pic "D"
	setcycle 60 correct_response "/"
	setcycle 60 Match "N"
	setcycle 60 size "S"
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	setcycle 70 Probe "I see the match stick grabbed by her fingers."
	setcycle 70 Target "STI/007-allumette_match_r.jpg"
	setcycle 70 Pic "R"
	setcycle 70 correct_response "/"
	setcycle 70 Match "N"
	setcycle 70 size "S"
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	setcycle 80 Probe "I see the train that is driving outside the rail road."
	setcycle 80 Target "STI/240-pont_bridge.jpg"
	setcycle 80 Pic "P"
	setcycle 80 correct_response "z"
	setcycle 80 Match "D"
	setcycle 80 size "D"
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	run Trial_E

define loop List03_loop_E2
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_E

define loop List03_loop_E3
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_E

define loop List03_loop_E4
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_E

define loop List04_loop_C1
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_C"
	set description "Balance = DABC"
	set cycles 160
	set column_order "Probe;Target;Match;size;Pic;correct_response"
	set break_if "never"
	setcycle 0 Probe "我看見沒裝水的浴缸"
	setcycle 0 Target "STI/020-baignoire_bathtub_r.jpg"
	setcycle 0 Pic "R"
	setcycle 0 correct_response "/"
	setcycle 0 Match "N"
	setcycle 0 size "L"
	setcycle 1 Probe "我看見家俱店櫥窗裡的一組雙人沙發"
	setcycle 1 Target "STI/couch_r.jpg"
	setcycle 1 Pic "R"
	setcycle 1 correct_response "/"
	setcycle 1 Match "N"
	setcycle 1 size "L"
	setcycle 2 Probe "我看見沒人坐的搖椅"
	setcycle 2 Target "STI/rocker_r.jpg"
	setcycle 2 Pic "R"
	setcycle 2 correct_response "/"
	setcycle 2 Match "N"
	setcycle 2 size "L"
	setcycle 3 Probe "我看見一輛進站中的蒸氣火車頭"
	setcycle 3 Target "STI/178-locomotive_locomotive_r.jpg"
	setcycle 3 Pic "R"
	setcycle 3 correct_response "/"
	setcycle 3 Match "N"
	setcycle 3 size "L"
	setcycle 4 Probe "我看見一輛載著病患的救護車"
	setcycle 4 Target "STI/008-ambulance_ambulance_r.jpg"
	setcycle 4 Pic "R"
	setcycle 4 correct_response "/"
	setcycle 4 Match "N"
	setcycle 4 size "L"
	setcycle 5 Probe "我看見一輛開往目的地的露營車"
	setcycle 5 Target "STI/064-camping-car_camper_r.jpg"
	setcycle 5 Pic "R"
	setcycle 5 correct_response "/"
	setcycle 5 Match "N"
	setcycle 5 size "L"
	setcycle 6 Probe "我看見一輛準備發動的大巴士"
	setcycle 6 Target "STI/018-car_bus_r.jpg"
	setcycle 6 Pic "R"
	setcycle 6 correct_response "/"
	setcycle 6 Match "N"
	setcycle 6 size "L"
	setcycle 7 Probe "我看見一台停在路邊的氣派轎車"
	setcycle 7 Target "STI/car_r.jpg"
	setcycle 7 Pic "R"
	setcycle 7 correct_response "/"
	setcycle 7 Match "N"
	setcycle 7 size "L"
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	setcycle 10 Probe "我看見一台準備起飛的飛機"
	setcycle 10 Target "STI/plane_r.jpg"
	setcycle 10 Pic "D"
	setcycle 10 correct_response "/"
	setcycle 10 Match "Y"
	setcycle 10 size "L"
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	setcycle 20 Probe "我看一輛四輪朝天的水泥攪拌車"
	setcycle 20 Target "STI/cementtruck_r.jpg"
	setcycle 20 Pic "R"
	setcycle 20 correct_response "/"
	setcycle 20 Match "Y"
	setcycle 20 size "L"
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	setcycle 30 Probe "我看見一輛被推倒的除草機"
	setcycle 30 Target "STI/lawnmowertractor_r.jpg"
	setcycle 30 Pic "D"
	setcycle 30 correct_response "/"
	setcycle 30 Match "N"
	setcycle 30 size "L"
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	setcycle 40 Probe "我看見球員握在手中的羽球拍"
	setcycle 40 Target "STI/badmintonracket_r.jpg"
	setcycle 40 Pic "R"
	setcycle 40 correct_response "/"
	setcycle 40 Match "N"
	setcycle 40 size "S"
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	setcycle 50 Probe "我看見放在菜架上的胡蘿蔔"
	setcycle 50 Target "STI/carrot01_r.jpg"
	setcycle 50 Pic "D"
	setcycle 50 correct_response "/"
	setcycle 50 Match "Y"
	setcycle 50 size "S"
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	setcycle 60 Probe "我看見收在抽屜裡的相框"
	setcycle 60 Target "STI/pictureframe04_r.jpg"
	setcycle 60 Pic "R"
	setcycle 60 correct_response "/"
	setcycle 60 Match "Y"
	setcycle 60 size "S"
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	setcycle 70 Probe "我看見她用手指捏住的火柴棒"
	setcycle 70 Target "STI/007-allumette_match_r.jpg"
	setcycle 70 Pic "D"
	setcycle 70 correct_response "/"
	setcycle 70 Match "N"
	setcycle 70 size "S"
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	setcycle 80 Probe "我看見一台出軌的火車車廂"
	setcycle 80 Target "STI/240-pont_bridge.jpg"
	setcycle 80 Pic "P"
	setcycle 80 correct_response "z"
	setcycle 80 Match "D"
	setcycle 80 size "D"
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	run Trial_C

define loop List04_loop_C2
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List04_loop_C3
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List04_loop_C4
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item ""
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run 

define loop List04_loop_E1
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Balance = ABCD"
	set cycles 160
	set column_order "Probe;Target;Match;size;Pic;correct_response"
	set break_if "never"
	setcycle 0 Probe "I see the empty bathtub."
	setcycle 0 Target "STI/020-baignoire_bathtub_r.jpg"
	setcycle 0 Pic "R"
	setcycle 0 correct_response "/"
	setcycle 0 Match "Y"
	setcycle 0 size "L"
	setcycle 1 Probe "I see the couch through the window of the furniture store."
	setcycle 1 Target "STI/couch_r.jpg"
	setcycle 1 Pic "R"
	setcycle 1 correct_response "/"
	setcycle 1 Match "Y"
	setcycle 1 size "L"
	setcycle 2 Probe "I see the rocking chair in the living room."
	setcycle 2 Target "STI/rocker_r.jpg"
	setcycle 2 Pic "R"
	setcycle 2 correct_response "/"
	setcycle 2 Match "Y"
	setcycle 2 size "L"
	setcycle 3 Probe "I see the steam locomotive that is heading toward the train station."
	setcycle 3 Target "STI/178-locomotive_locomotive_r.jpg"
	setcycle 3 Pic "R"
	setcycle 3 correct_response "/"
	setcycle 3 Match "Y"
	setcycle 3 size "L"
	setcycle 4 Probe "I see the ambulance that is carrying the patient to the hospital."
	setcycle 4 Target "STI/008-ambulance_ambulance_r.jpg"
	setcycle 4 Pic "R"
	setcycle 4 correct_response "/"
	setcycle 4 Match "Y"
	setcycle 4 size "L"
	setcycle 5 Probe "I see the camper that is driving toward the campgrounds."
	setcycle 5 Target "STI/064-camping-car_camper_r.jpg"
	setcycle 5 Pic "R"
	setcycle 5 correct_response "/"
	setcycle 5 Match "Y"
	setcycle 5 size "L"
	setcycle 6 Probe "I see the bus that is leaving the bus stop."
	setcycle 6 Target "STI/018-car_bus_r.jpg"
	setcycle 6 Pic "R"
	setcycle 6 correct_response "/"
	setcycle 6 Match "Y"
	setcycle 6 size "L"
	setcycle 7 Probe "I see the fabulous car that is running on the road."
	setcycle 7 Target "STI/car_r.jpg"
	setcycle 7 Pic "R"
	setcycle 7 correct_response "/"
	setcycle 7 Match "Y"
	setcycle 7 size "L"
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	setcycle 10 Probe "I see the plane that is running on the runway."
	setcycle 10 Target "STI/plane_r.jpg"
	setcycle 10 Pic "D"
	setcycle 10 correct_response "/"
	setcycle 10 Match "Y"
	setcycle 10 size "L"
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	setcycle 20 Probe "I see the cement mixer overturned on the crossroad because of the car accident."
	setcycle 20 Target "STI/cementtruck_r.jpg"
	setcycle 20 Pic "R"
	setcycle 20 correct_response "/"
	setcycle 20 Match "N"
	setcycle 20 size "L"
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	setcycle 30 Probe "I see the lawn mower that is pushed by someone."
	setcycle 30 Target "STI/lawnmowertractor_r.jpg"
	setcycle 30 Pic "D"
	setcycle 30 correct_response "/"
	setcycle 30 Match "N"
	setcycle 30 size "L"
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	setcycle 40 Probe "I see the tennis racket that is hold by the player."
	setcycle 40 Target "STI/badmintonracket_r.jpg"
	setcycle 40 Pic "R"
	setcycle 40 correct_response "/"
	setcycle 40 Match "Y"
	setcycle 40 size "S"
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	setcycle 50 Probe "I see the carrots on the shelf in the supermarket."
	setcycle 50 Target "STI/carrot01_r.jpg"
	setcycle 50 Pic "D"
	setcycle 50 correct_response "/"
	setcycle 50 Match "Y"
	setcycle 50 size "S"
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	setcycle 60 Probe "I see the frame left in the drawer."
	setcycle 60 Target "STI/pictureframe04_r.jpg"
	setcycle 60 Pic "R"
	setcycle 60 correct_response "/"
	setcycle 60 Match "N"
	setcycle 60 size "S"
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	setcycle 70 Probe "I see the match stick grabbed by her fingers."
	setcycle 70 Target "STI/007-allumette_match_r.jpg"
	setcycle 70 Pic "D"
	setcycle 70 correct_response "/"
	setcycle 70 Match "N"
	setcycle 70 size "S"
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	setcycle 80 Probe "I see the train that is driving outside the rail road."
	setcycle 80 Target "STI/240-pont_bridge.jpg"
	setcycle 80 Pic "P"
	setcycle 80 correct_response "z"
	setcycle 80 Match "D"
	setcycle 80 size "D"
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	run Trial_E

define loop List04_loop_E2
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_E

define loop List04_loop_E3
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_E

define loop List04_loop_E4
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "Trial_E"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run Trial_E

define form_text_display List_Selection_cond1_C
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>練習完成，準備開始正式實驗</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=列表1 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=列表2 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=列表3 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=列表4 var=List4


define form_text_display List_Selection_cond1_E
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>Start Experimental Session</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=LIST01 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=LIST02 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=LIST03 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=LIST04 var=List4


define form_text_display List_Selection_cond2_C
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>練習完成，準備開始正式實驗</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=列表1 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=列表2 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=列表3 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=列表4 var=List4


define form_text_display List_Selection_cond2_E
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>End of Practic. Ready to Start Experimental Session</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=LIST01 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=LIST02 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=LIST03 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=LIST04 var=List4


define form_text_display List_Selection_cond3_C
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>練習完成，準備開始正式實驗</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=列表1 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=列表2 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=列表3 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=列表4 var=List4


define form_text_display List_Selection_cond3_E
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>End of Practic. Ready to Start Experimental Session</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=LIST01 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=LIST02 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=LIST03 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=LIST04 var=List4


define form_text_display List_Selection_cond4_C
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>練習完成，準備開始正式實驗</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=列表1 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=列表2 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=列表3 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=列表4 var=List4


define form_text_display List_Selection_cond4_E
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout "infinite"
	set spacing 10
	set rows "1;1;1;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>End of Practic. Ready to Start Experimental Session</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme "gray"
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=LIST01 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=LIST02 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=LIST03 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=LIST04 var=List4


define sequence Prac_seq_C
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run 1st_Observe_Prac_loop_C "[condition1]='yes'"
	run 1st_Move_Prac_loop_C "[condition2]='yes'"
	run 3rd_Move_Prac_loop_C "[condition4]='yes'"
	run 3rd_Observe_Prac_loop_C "[condition3]='yes'"

define sequence Prac_seq_E
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run 1st_Observe_Prac_loop_E "[condition1]='yes'"
	run 1st_Move_Prac_loop_E "[condition2]='yes'"
	run 3rd_Observe_Prac_loop_E "[condition3]='yes'"
	run 3rd_Move_Prac_loop_E "[condition4]='yes'"

define sketchpad Probe_C
	set duration 0
	set description "Displays stimuli sentence"
	draw textline center=0 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="[Probe]" x=-304 y=0 z_index=0
	draw textline center=0 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text=讀完句子請按空白鍵 x=-128 y=288 z_index=0

define sketchpad Probe_E
	set duration 0
	set description "Displays stimuli sentence"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[Probe]" x=-432 y=0 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=yes font_size=15 html=yes show_if=always text="Press space bar when you had read the sentence" x=-192 y=288 z_index=0

define keyboard_response Probe_response_C
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "space"

define keyboard_response Probe_response_E
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "space"

define sketchpad Q1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="Is English your native langauge?<br /><br />/:YES<br />Z:NO" x=0 y=0 z_index=0

define sketchpad Q2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="Is English your second langauge?<br /><br />/:YES<br />Z:NO" x=0 y=0 z_index=0

define sketchpad Q3
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="How proficient are you in English?<br /><br />Choose one number from <br />1 (Not proficient) to 7 (Very proficient)." x=0 y=0 z_index=0

define sketchpad Q4
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="Do you have any comments about this experiment?<br /><br />Tell your epxerimenter directly. Thanks." x=0 y=0 z_index=0

define sketchpad Ready_C
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="若無疑問，按空白鍵開始實驗" x=0 y=0 z_index=0

define sketchpad Ready_E
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=30 html=yes show_if=always text="Press Space Key to Start" x=0 y=0 z_index=0

define keyboard_response Response_Q1
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "z;/"

define keyboard_response Response_Q2
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "z;/"

define keyboard_response Response_Q3
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7"

define sketchpad Second_Fixation_C
	set duration 500
	set description "Displays Second Fixation"
	draw fixdot color="#ffffff" show_if=always style=default x=0 y=0 z_index=0

define sketchpad Second_Fixation_E
	set duration 500
	set description "Displays Second Fixation"
	draw fixdot color="#ffffff" show_if=always style=default x=0 y=0 z_index=0

define sketchpad Start_C
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="練習結束。請按任意鍵開始正式實驗。" x=0 y=0 z_index=0

define sketchpad Start_E
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="End of practice. Press any key to start." x=0 y=0 z_index=0

define sketchpad Target_C
	set duration 0
	set description "Displays target picture"
	draw image center=1 file="[Target]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Target_E
	set duration 0
	set description "Displays target picture"
	draw image center=1 file="[Target]" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response Target_response_C
	set timeout 1500
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "z;/"

define keyboard_response Target_response_E
	set timeout 1500
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "z;/"

define sketchpad Target_response_correct_C
	set duration 500
	set description "Correct Feedback"
	draw textline center=1 color="#00aa00" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=答對了 x=0 y=0 z_index=0

define sketchpad Target_response_correct_E
	set duration 500
	set description "Correct Feedback"
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Correct!" x=0 y=0 z_index=0

define sketchpad Target_response_noans_C
	set duration 500
	set description "No Answer Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=按鍵太慢 x=0 y=0 z_index=0

define sketchpad Target_response_noans_E
	set duration 500
	set description "No Answer Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Too Late" x=0 y=0 z_index=0

define sketchpad Target_response_wrong_C
	set duration 500
	set description "Wrong Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=答錯了 x=0 y=0 z_index=0

define sketchpad Target_response_wrong_E
	set duration 500
	set description "Wrong Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Error!" x=0 y=0 z_index=0

define feedback Trial_Break_C
	set reset_variables "yes"
	set duration "keypress"
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=休息一下 x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=按空白鍵繼續實驗 x=0 y=32 z_index=0

define feedback Trial_Break_E
	set reset_variables "yes"
	set duration "keypress"
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Take a break" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Press space bar to continue" x=0 y=0 z_index=0

define sequence Trial_C
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run First_Fixation_C always
	run Probe_C always
	run Probe_response_C always
	run Second_Fixation_C always
	run Target_C always
	run Target_response_C always
	run Target_response_correct_C "[correct]=1"
	run Target_response_wrong_C "[correct]=0"
	run Target_response_noans_C "[response_time]<151 or [response_time]>1499"
	run Trial_logger_C always
	run Trial_Break_C "=self.get('count_Trial_C') <121 and self.get('count_Trial_C') % 41 == 40"

define sequence Trial_E
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run First_Fixation_E always
	run Probe_E always
	run Probe_response_E always
	run Second_Fixation_E always
	run Target_E always
	run Target_response_E always
	run Target_response_correct_E "[correct]=1"
	run Target_response_wrong_E "[correct]=0"
	run Target_response_noans_E "[response_time]<151 or [response_time]>1499"
	run Trial_logger_E always
	run Trial_Break_E "=self.get('count_Trial_E') <121 and self.get('count_Trial_E') % 41 == 40"

define logger Trial_logger_C
	set description "Logs experimental data"
	set auto_log "yes"

define logger Trial_logger_E
	set description "Logs experimental data"
	set auto_log "yes"

define sketchpad Welcome_C
	set duration "keypress"
	set description "First Instruction"
	draw textline center=1 color=white font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=句圖比對作業 x=0 y=-288 z_index=0
	draw textline center=0 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text="每一題的的程序是先一個要閱讀的句子，再呈現要判斷的圖片。 <br /><br />你的任務是判斷圖片呈現的物件，是句子裡提到的物件。你可以<br />確實讀完句子，再按空白鍵讓電腦呈現圖片。<br /><br />如果圖片呈現的是句子提到的物件，請按'/'。<br />如果圖片呈現的不是句子提到的物件，請按'Z'。<br /><br />判斷圖片是否符合有時間限制，請以最快且最正確的方式作答。<br /><br />" x=-448 y=-224 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text=請確認沒有問題之後按鍵開始實驗 x=0 y=192 z_index=0

define sketchpad Welcome_E
	set duration "keypress"
	set description "First Instruction"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Sentence Picture Verification" x=0 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Press space bar to practice" x=0 y=192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=-160 y=-32 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Next you will read a sentence which is followed by a picture. <br /><br />In every trial, your task is to verify if the picture show the object <br />mentioned in the preceding sentence.<br /><br />Press '/' when the picture shows the object.<br />Press 'Z' when the picture does not show the object.<br /><br />Try to be as fast and accurate as possible." x=-448 y=-192 z_index=0

