---
API: 2
OpenSesame: 3.0.7
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title Simulation2016_EXP02
set subject_parity even
set subject_nr 0
set start EXP02
set sampler_backend legacy
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set foreground white
set font_size 18
set font_italic no
set font_family "chinese-japanese-korean"
set font_bold no
set experiment_path "C:/Users/60941sch/EXPs/SIM2016"
set description "Matching Tasks"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi yes
set background black

define sequence Afer_Experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Q1 always
	run Response_Q1 always
	run Trial_logger_E always
	run Q2 always
	run Response_Q2 always
	run Trial_logger_E always
	run Q3 always
	run Response_Q3 always
	run Trial_logger_E always
	run Q4 always

define sequence Chinese
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Welcome_C always
	run Prac_seq_C always
	run Start_C always
	run Exp_seq_C always
	run End_C always

define sequence EXP02
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Language_Selection always
	run Chinese "[language1]='yes'"
	run English "[language2]='yes'"

define sketchpad End_C
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="實驗結束。請通知實驗者。" x=0 y=0 z_index=0

define sketchpad End_E
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="End of Experiment<br /><br />Before leave LAB. <br />Please answer four questions.<br /><br /><br />Press SPACE to quetions." x=0 y=0 z_index=0

define sequence English
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Welcome_E always
	run Prac_seq_E always
	run Start_E always
	run Exp_seq_E always
	run End_E always
	run Afer_Experiment always

define sequence Exp_seq_C
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run List_Selection_cond1_C always
	run Ready_C always
	run List01_loop_C1 "[List1] = 'yes'"
	run List02_loop_C1 "[List2] = 'yes'"
	run List03_loop_C1 "[List3] = 'yes'"
	run List04_loop_C1 "[List4] = 'yes'"

define sequence Exp_seq_E
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run List_Selection_cond1_E always
	run Ready_E always
	run List01_loop_E1 "[List1] = 'yes'"
	run List02_loop_E1 "[List2] = 'yes'"
	run List03_loop_E1 "[List3] = 'yes'"
	run List04_loop_E1 "[List4] = 'yes'"

define sketchpad First_Fixation_C
	set duration 1000
	set description "Displays Initial Fixation"
	draw fixdot color="#ffff00" show_if=always style=default x=-304 y=0 z_index=0

define sketchpad First_Fixation_E
	set duration 1000
	set description "Displays Initial Fixation"
	draw fixdot color="#ffff00" show_if=always style=default x=-432 y=0 z_index=0

define form_text_display Language_Selection
	set timeout infinite
	set spacing 10
	set rows "1;1;1;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>請選擇語言  Choose Language</span>"
	__form_text__
	執行中文實驗請按"中文"
	Press "English" if you are going to run English
	__end__
	set description "A simple text display form"
	set cols "1;1"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 1 1 button center=yes frame=yes text=中文 var=language1
	widget 1 2 1 1 button center=yes frame=yes text=English var=language2


define loop List01_loop_C1
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Balance = ABCD"
	set cycles 160
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if never
	setcycle 0 Orien "D"
	setcycle 0 Target "STI_EXP02/020-baignoire_bathtub.jpg"
	setcycle 0 Probe "那套浴缸是空的"
	setcycle 0 correct_response "/"
	setcycle 0 Match "Y"
	setcycle 0 Size "L"
	setcycle 1 Orien "D"
	setcycle 1 Target "STI_EXP02/couch.jpg"
	setcycle 1 Probe "那組雙人沙發靠著西邊"
	setcycle 1 correct_response "/"
	setcycle 1 Match "Y"
	setcycle 1 Size "L"
	setcycle 2 Orien "D"
	setcycle 2 Target "STI_EXP02/rocker.jpg"
	setcycle 2 Probe "那張搖椅朝向東邊"
	setcycle 2 correct_response "/"
	setcycle 2 Match "Y"
	setcycle 2 Size "L"
	setcycle 3 Orien "D"
	setcycle 3 Target "STI_EXP02/178-locomotive_locomotive.jpg"
	setcycle 3 Probe "那輛蒸氣火車頭向東行駛"
	setcycle 3 correct_response "/"
	setcycle 3 Match "Y"
	setcycle 3 Size "L"
	setcycle 4 Orien "D"
	setcycle 4 Target "STI_EXP02/008-ambulance_ambulance.jpg"
	setcycle 4 Probe "那輛救護車向東行駛"
	setcycle 4 correct_response "/"
	setcycle 4 Match "Y"
	setcycle 4 Size "L"
	setcycle 5 Orien "D"
	setcycle 5 Target "STI_EXP02/064-camping-car_camper.jpg"
	setcycle 5 Probe "那輛露營車向東行駛"
	setcycle 5 correct_response "/"
	setcycle 5 Match "Y"
	setcycle 5 Size "L"
	setcycle 6 Orien "D"
	setcycle 6 Target "STI_EXP02/018-car_bus.jpg"
	setcycle 6 Probe "那輛大巴士向東行駛"
	setcycle 6 correct_response "/"
	setcycle 6 Match "Y"
	setcycle 6 Size "L"
	setcycle 7 Orien "D"
	setcycle 7 Target "STI_EXP02/car.jpg"
	setcycle 7 Probe "那輛氣派轎車向西行駛"
	setcycle 7 correct_response "/"
	setcycle 7 Match "Y"
	setcycle 7 Size "L"
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	setcycle 10 Orien "D"
	setcycle 10 Target "STI_EXP02/plane.jpg"
	setcycle 10 Probe "那架飛機在觀景台右側"
	setcycle 10 correct_response "/"
	setcycle 10 Match "N"
	setcycle 10 Size "L"
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	setcycle 20 Orien "R"
	setcycle 20 Target "STI_EXP02/cementtruck_r.jpg"
	setcycle 20 Probe "那輛水泥攪伴車在我右邊"
	setcycle 20 correct_response "/"
	setcycle 20 Match "Y"
	setcycle 20 Size "L"
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	setcycle 30 Orien "R"
	setcycle 30 Target "STI_EXP02/lawnmowertractor_r.jpg"
	setcycle 30 Probe "那輛除草機在我左邊"
	setcycle 30 correct_response "/"
	setcycle 30 Match "N"
	setcycle 30 Size "L"
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	setcycle 40 Orien "D"
	setcycle 40 Target "STI_EXP02/badmintonracket.jpg"
	setcycle 40 Probe "那隻羽球拍被球員舉起"
	setcycle 40 correct_response "/"
	setcycle 40 Match "Y"
	setcycle 40 Size "S"
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	setcycle 50 Orien "D"
	setcycle 50 Target "STI_EXP02/carrot01.jpg"
	setcycle 50 Probe "那顆胡蘿蔔被農夫拔起來"
	setcycle 50 correct_response "/"
	setcycle 50 Match "N"
	setcycle 50 Size "S"
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	setcycle 60 Orien "R"
	setcycle 60 Target "STI_EXP02/pictureframe04_r.jpg"
	setcycle 60 Probe "那件相框在抽屜裡"
	setcycle 60 correct_response "/"
	setcycle 60 Match "Y"
	setcycle 60 Size "S"
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	setcycle 70 Orien "R"
	setcycle 70 Target "STI_EXP02/007-allumette_match_r.jpg"
	setcycle 70 Probe "那支火柴棒放在桌子上"
	setcycle 70 correct_response "/"
	setcycle 70 Match "N"
	setcycle 70 Size "S"
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	setcycle 80 Orien "F"
	setcycle 80 Target "STI_EXP02/240-pont_bridge.jpg"
	setcycle 80 Probe "那輛火車在鐵軌上奔馳。"
	setcycle 80 correct_response "z"
	setcycle 80 Match "F"
	setcycle 80 Size "F"
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	run Trial_C

define loop List01_loop_E1
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_E
	set description "Balance = ABCD"
	set cycles 160
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if never
	setcycle 0 Orien "D"
	setcycle 0 Target "STI_EXP02/020-baignoire_bathtub.jpg"
	setcycle 0 Probe "The bath tube is empty."
	setcycle 0 correct_response "/"
	setcycle 0 Match "Y"
	setcycle 0 Size "L"
	setcycle 1 Orien "D"
	setcycle 1 Target "STI_EXP02/couch.jpg"
	setcycle 1 Probe "The couch is close to the left wall."
	setcycle 1 correct_response "/"
	setcycle 1 Match "Y"
	setcycle 1 Size "L"
	setcycle 2 Orien "D"
	setcycle 2 Target "STI_EXP02/rocker.jpg"
	setcycle 2 Probe "The rocking chair is toward the east."
	setcycle 2 correct_response "/"
	setcycle 2 Match "Y"
	setcycle 2 Size "L"
	setcycle 3 Orien "D"
	setcycle 3 Target "STI_EXP02/178-locomotive_locomotive.jpg"
	setcycle 3 Probe "The train is running to the east."
	setcycle 3 correct_response "/"
	setcycle 3 Match "Y"
	setcycle 3 Size "L"
	setcycle 4 Orien "D"
	setcycle 4 Target "STI_EXP02/008-ambulance_ambulance.jpg"
	setcycle 4 Probe "The ambulance is running to the east."
	setcycle 4 correct_response "/"
	setcycle 4 Match "Y"
	setcycle 4 Size "L"
	setcycle 5 Orien "D"
	setcycle 5 Target "STI_EXP02/064-camping-car_camper.jpg"
	setcycle 5 Probe "The camper is running to the east."
	setcycle 5 correct_response "/"
	setcycle 5 Match "Y"
	setcycle 5 Size "L"
	setcycle 6 Orien "D"
	setcycle 6 Target "STI_EXP02/018-car_bus.jpg"
	setcycle 6 Probe "The bus is running to the east."
	setcycle 6 correct_response "/"
	setcycle 6 Match "Y"
	setcycle 6 Size "L"
	setcycle 7 Orien "D"
	setcycle 7 Target "STI_EXP02/car.jpg"
	setcycle 7 Probe "The car is running to the west."
	setcycle 7 correct_response "/"
	setcycle 7 Match "Y"
	setcycle 7 Size "L"
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	setcycle 10 Orien "D"
	setcycle 10 Target "STI_EXP02/plane.jpg"
	setcycle 10 Probe "The plane is in the right of the balcony."
	setcycle 10 correct_response "/"
	setcycle 10 Match "N"
	setcycle 10 Size "L"
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	setcycle 20 Orien "R"
	setcycle 20 Target "STI_EXP02/cementtruck_r.jpg"
	setcycle 20 Probe "The cement truck is passing my right side."
	setcycle 20 correct_response "/"
	setcycle 20 Match "Y"
	setcycle 20 Size "L"
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	setcycle 30 Orien "R"
	setcycle 30 Target "STI_EXP02/lawnmowertractor_r.jpg"
	setcycle 30 Probe "The lawn mower is in the left of me."
	setcycle 30 correct_response "/"
	setcycle 30 Match "N"
	setcycle 30 Size "L"
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	setcycle 40 Orien "D"
	setcycle 40 Target "STI_EXP02/badmintonracket.jpg"
	setcycle 40 Probe "The racket is lifted by the player."
	setcycle 40 correct_response "/"
	setcycle 40 Match "Y"
	setcycle 40 Size "S"
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	setcycle 50 Orien "D"
	setcycle 50 Target "STI_EXP02/carrot01.jpg"
	setcycle 50 Probe "The carrot is just plucked by the farmer."
	setcycle 50 correct_response "/"
	setcycle 50 Match "N"
	setcycle 50 Size "S"
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	setcycle 60 Orien "R"
	setcycle 60 Target "STI_EXP02/pictureframe04_r.jpg"
	setcycle 60 Probe "The photo frame is in the drawer."
	setcycle 60 correct_response "/"
	setcycle 60 Match "Y"
	setcycle 60 Size "S"
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	setcycle 70 Orien "R"
	setcycle 70 Target "STI_EXP02/007-allumette_match_r.jpg"
	setcycle 70 Probe "The match is on the table."
	setcycle 70 correct_response "/"
	setcycle 70 Match "N"
	setcycle 70 Size "S"
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	setcycle 80 Orien "F"
	setcycle 80 Target "STI_EXP02/240-pont_bridge.jpg"
	setcycle 80 Probe "The  train is running on the rail road."
	setcycle 80 correct_response "z"
	setcycle 80 Match "F"
	setcycle 80 Size "F"
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	run Trial_E

define loop List02_loop_C1
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Balance = BCDA"
	set cycles 160
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if never
	setcycle 0 Orien "D"
	setcycle 0 Target "STI_EXP02/020-baignoire_bathtub.jpg"
	setcycle 0 Probe "那套浴缸下墜中"
	setcycle 0 correct_response "/"
	setcycle 0 Match "N"
	setcycle 0 Size "L"
	setcycle 1 Orien "D"
	setcycle 1 Target "STI_EXP02/couch.jpg"
	setcycle 1 Probe "那組雙人沙發靠著東邊"
	setcycle 1 correct_response "/"
	setcycle 1 Match "N"
	setcycle 1 Size "L"
	setcycle 2 Orien "D"
	setcycle 2 Target "STI_EXP02/rocker.jpg"
	setcycle 2 Probe "那張搖椅朝向西邊"
	setcycle 2 correct_response "/"
	setcycle 2 Match "N"
	setcycle 2 Size "L"
	setcycle 3 Orien "D"
	setcycle 3 Target "STI_EXP02/178-locomotive_locomotive.jpg"
	setcycle 3 Probe "那輛蒸氣火車頭向西行駛"
	setcycle 3 correct_response "/"
	setcycle 3 Match "N"
	setcycle 3 Size "L"
	setcycle 4 Orien "D"
	setcycle 4 Target "STI_EXP02/008-ambulance_ambulance.jpg"
	setcycle 4 Probe "那輛救護車向西行駛"
	setcycle 4 correct_response "/"
	setcycle 4 Match "N"
	setcycle 4 Size "L"
	setcycle 5 Orien "D"
	setcycle 5 Target "STI_EXP02/064-camping-car_camper.jpg"
	setcycle 5 Probe "那輛露營車向西行駛"
	setcycle 5 correct_response "/"
	setcycle 5 Match "N"
	setcycle 5 Size "L"
	setcycle 6 Orien "D"
	setcycle 6 Target "STI_EXP02/018-car_bus.jpg"
	setcycle 6 Probe "那輛大巴士向西行駛"
	setcycle 6 correct_response "/"
	setcycle 6 Match "N"
	setcycle 6 Size "L"
	setcycle 7 Orien "D"
	setcycle 7 Target "STI_EXP02/car.jpg"
	setcycle 7 Probe "那輛氣派轎車向東行駛"
	setcycle 7 correct_response "/"
	setcycle 7 Match "N"
	setcycle 7 Size "L"
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	setcycle 10 Orien "R"
	setcycle 10 Target "STI_EXP02/plane_r.jpg"
	setcycle 10 Probe "那架飛機在觀景台右側"
	setcycle 10 correct_response "/"
	setcycle 10 Match "Y"
	setcycle 10 Size "L"
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	setcycle 20 Orien "R"
	setcycle 20 Target "STI_EXP02/cementtruck_r.jpg"
	setcycle 20 Probe "那輛水泥攪伴車在我左邊"
	setcycle 20 correct_response "/"
	setcycle 20 Match "N"
	setcycle 20 Size "L"
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	setcycle 30 Orien "D"
	setcycle 30 Target "STI_EXP02/lawnmowertractor.jpg"
	setcycle 30 Probe "那輛除草機在我左邊"
	setcycle 30 correct_response "/"
	setcycle 30 Match "Y"
	setcycle 30 Size "L"
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	setcycle 40 Orien "D"
	setcycle 40 Target "STI_EXP02/badmintonracket.jpg"
	setcycle 40 Probe "那隻羽球拍被掛在牆上"
	setcycle 40 correct_response "/"
	setcycle 40 Match "N"
	setcycle 40 Size "S"
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	setcycle 50 Orien "R"
	setcycle 50 Target "STI_EXP02/carrot01_r.jpg"
	setcycle 50 Probe "那顆胡蘿蔔被農夫拔起來"
	setcycle 50 correct_response "/"
	setcycle 50 Match "Y"
	setcycle 50 Size "S"
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	setcycle 60 Orien "R"
	setcycle 60 Target "STI_EXP02/pictureframe04_r.jpg"
	setcycle 60 Probe "那件相框放在桌子上"
	setcycle 60 correct_response "/"
	setcycle 60 Match "N"
	setcycle 60 Size "S"
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	setcycle 70 Orien "D"
	setcycle 70 Target "STI_EXP02/007-allumette_match.jpg"
	setcycle 70 Probe "那支火柴棒放在桌子上"
	setcycle 70 correct_response "/"
	setcycle 70 Match "Y"
	setcycle 70 Size "S"
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	setcycle 80 Orien "F"
	setcycle 80 Target "STI_EXP02/240-pont_bridge.jpg"
	setcycle 80 Probe "那輛火車在鐵軌上奔馳。"
	setcycle 80 correct_response "z"
	setcycle 80 Match "F"
	setcycle 80 Size "F"
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	run Trial_C

define loop List02_loop_E1
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_E
	set description "Balance = ABCD"
	set cycles 160
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if never
	setcycle 0 Orien "D"
	setcycle 0 Target "STI_EXP02/020-baignoire_bathtub.jpg"
	setcycle 0 Probe "STI_EXP02/020-baignoire_bathtub.jpg"
	setcycle 0 correct_response "/"
	setcycle 0 Match "N"
	setcycle 0 Size "L"
	setcycle 1 Orien "D"
	setcycle 1 Target "STI_EXP02/couch.jpg"
	setcycle 1 Probe "STI_EXP02/couch.jpg"
	setcycle 1 correct_response "/"
	setcycle 1 Match "N"
	setcycle 1 Size "L"
	setcycle 2 Orien "D"
	setcycle 2 Target "STI_EXP02/rocker.jpg"
	setcycle 2 Probe "STI_EXP02/rocker.jpg"
	setcycle 2 correct_response "/"
	setcycle 2 Match "N"
	setcycle 2 Size "L"
	setcycle 3 Orien "D"
	setcycle 3 Target "STI_EXP02/178-locomotive_locomotive.jpg"
	setcycle 3 Probe "STI_EXP02/178-locomotive_locomotive.jpg"
	setcycle 3 correct_response "/"
	setcycle 3 Match "N"
	setcycle 3 Size "L"
	setcycle 4 Orien "D"
	setcycle 4 Target "STI_EXP02/008-ambulance_ambulance.jpg"
	setcycle 4 Probe "STI_EXP02/008-ambulance_ambulance.jpg"
	setcycle 4 correct_response "/"
	setcycle 4 Match "N"
	setcycle 4 Size "L"
	setcycle 5 Orien "D"
	setcycle 5 Target "STI_EXP02/064-camping-car_camper.jpg"
	setcycle 5 Probe "STI_EXP02/064-camping-car_camper.jpg"
	setcycle 5 correct_response "/"
	setcycle 5 Match "N"
	setcycle 5 Size "L"
	setcycle 6 Orien "D"
	setcycle 6 Target "STI_EXP02/018-car_bus.jpg"
	setcycle 6 Probe "STI_EXP02/018-car_bus.jpg"
	setcycle 6 correct_response "/"
	setcycle 6 Match "N"
	setcycle 6 Size "L"
	setcycle 7 Orien "D"
	setcycle 7 Target "STI_EXP02/car.jpg"
	setcycle 7 Probe "STI_EXP02/car.jpg"
	setcycle 7 correct_response "/"
	setcycle 7 Match "N"
	setcycle 7 Size "L"
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	setcycle 10 Orien "R"
	setcycle 10 Target "STI_EXP02/plane_r.jpg"
	setcycle 10 Probe "STI_EXP02/plane.jpg"
	setcycle 10 correct_response "/"
	setcycle 10 Match "Y"
	setcycle 10 Size "L"
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	setcycle 20 Orien "R"
	setcycle 20 Target "STI_EXP02/cementtruck_r.jpg"
	setcycle 20 Probe "STI_EXP02/cementtruck_r.jpg"
	setcycle 20 correct_response "/"
	setcycle 20 Match "N"
	setcycle 20 Size "L"
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	setcycle 30 Orien "D"
	setcycle 30 Target "STI_EXP02/lawnmowertractor.jpg"
	setcycle 30 Probe "STI_EXP02/lawnmowertractor_r.jpg"
	setcycle 30 correct_response "/"
	setcycle 30 Match "Y"
	setcycle 30 Size "L"
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	setcycle 40 Orien "D"
	setcycle 40 Target "STI_EXP02/badmintonracket.jpg"
	setcycle 40 Probe "STI_EXP02/badmintonracket.jpg"
	setcycle 40 correct_response "/"
	setcycle 40 Match "N"
	setcycle 40 Size "S"
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	setcycle 50 Orien "R"
	setcycle 50 Target "STI_EXP02/carrot01_r.jpg"
	setcycle 50 Probe "STI_EXP02/carrot01.jpg"
	setcycle 50 correct_response "/"
	setcycle 50 Match "Y"
	setcycle 50 Size "S"
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	setcycle 60 Orien "R"
	setcycle 60 Target "STI_EXP02/pictureframe04_r.jpg"
	setcycle 60 Probe "STI_EXP02/pictureframe04_r.jpg"
	setcycle 60 correct_response "/"
	setcycle 60 Match "N"
	setcycle 60 Size "S"
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	setcycle 70 Orien "D"
	setcycle 70 Target "STI_EXP02/007-allumette_match.jpg"
	setcycle 70 Probe "STI_EXP02/007-allumette_match_r.jpg"
	setcycle 70 correct_response "/"
	setcycle 70 Match "Y"
	setcycle 70 Size "S"
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	setcycle 80 Orien "F"
	setcycle 80 Target "STI_EXP02/240-pont_bridge.jpg"
	setcycle 80 Probe "The  train is running on the rail road."
	setcycle 80 correct_response "z"
	setcycle 80 Match "F"
	setcycle 80 Size "F"
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	run Trial_E

define loop List03_loop_C1
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Balance = CDAB"
	set cycles 160
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if never
	setcycle 0 Orien "R"
	setcycle 0 Target "STI_EXP02/020-baignoire_bathtub_r.jpg"
	setcycle 0 Probe "那套浴缸下墜中"
	setcycle 0 correct_response "/"
	setcycle 0 Match "Y"
	setcycle 0 Size "L"
	setcycle 1 Orien "R"
	setcycle 1 Target "STI_EXP02/couch_r.jpg"
	setcycle 1 Probe "那組雙人沙發靠著東邊"
	setcycle 1 correct_response "/"
	setcycle 1 Match "Y"
	setcycle 1 Size "L"
	setcycle 2 Orien "R"
	setcycle 2 Target "STI_EXP02/rocker_r.jpg"
	setcycle 2 Probe "那張搖椅朝向西邊"
	setcycle 2 correct_response "/"
	setcycle 2 Match "Y"
	setcycle 2 Size "L"
	setcycle 3 Orien "R"
	setcycle 3 Target "STI_EXP02/178-locomotive_locomotive_r.jpg"
	setcycle 3 Probe "那輛蒸氣火車頭向西行駛"
	setcycle 3 correct_response "/"
	setcycle 3 Match "Y"
	setcycle 3 Size "L"
	setcycle 4 Orien "R"
	setcycle 4 Target "STI_EXP02/008-ambulance_ambulance_r.jpg"
	setcycle 4 Probe "那輛救護車向西行駛"
	setcycle 4 correct_response "/"
	setcycle 4 Match "Y"
	setcycle 4 Size "L"
	setcycle 5 Orien "R"
	setcycle 5 Target "STI_EXP02/064-camping-car_camper_r.jpg"
	setcycle 5 Probe "那輛露營車向西行駛"
	setcycle 5 correct_response "/"
	setcycle 5 Match "Y"
	setcycle 5 Size "L"
	setcycle 6 Orien "R"
	setcycle 6 Target "STI_EXP02/018-car_bus_r.jpg"
	setcycle 6 Probe "那輛大巴士向西行駛"
	setcycle 6 correct_response "/"
	setcycle 6 Match "Y"
	setcycle 6 Size "L"
	setcycle 7 Orien "R"
	setcycle 7 Target "STI_EXP02/car_r.jpg"
	setcycle 7 Probe "那輛氣派轎車向東行駛"
	setcycle 7 correct_response "/"
	setcycle 7 Match "Y"
	setcycle 7 Size "L"
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	setcycle 10 Orien "R"
	setcycle 10 Target "STI_EXP02/plane_r.jpg"
	setcycle 10 Probe "那架飛機在觀景台左側"
	setcycle 10 correct_response "/"
	setcycle 10 Match "N"
	setcycle 10 Size "L"
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	setcycle 20 Orien "D"
	setcycle 20 Target "STI_EXP02/cementtruck.jpg"
	setcycle 20 Probe "那輛水泥攪伴車在我左邊"
	setcycle 20 correct_response "/"
	setcycle 20 Match "Y"
	setcycle 20 Size "L"
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	setcycle 30 Orien "D"
	setcycle 30 Target "STI_EXP02/lawnmowertractor.jpg"
	setcycle 30 Probe "那輛除草機在我右邊"
	setcycle 30 correct_response "/"
	setcycle 30 Match "N"
	setcycle 30 Size "L"
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	setcycle 40 Orien "F"
	setcycle 40 Target "STI_EXP02/badmintonracket_r.jpg"
	setcycle 40 Probe "那隻羽球拍被掛在牆上"
	setcycle 40 correct_response "z"
	setcycle 40 Match "Y"
	setcycle 40 Size "F"
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	setcycle 50 Orien "F"
	setcycle 50 Target "STI_EXP02/carrot01_r.jpg"
	setcycle 50 Probe "那顆胡蘿蔔在超級市場的架子上"
	setcycle 50 correct_response "z"
	setcycle 50 Match "N"
	setcycle 50 Size "F"
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	setcycle 80 Orien "F"
	setcycle 80 Target "STI_EXP02/240-pont_bridge.jpg"
	setcycle 80 Probe "那輛火車在鐵軌上奔馳。"
	setcycle 80 correct_response "z"
	setcycle 80 Match "F"
	setcycle 80 Size "F"
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	setcycle 120 Orien "P"
	setcycle 120 Target "STI_EXP02/fryingpan02a.jpg"
	setcycle 120 Probe "那捲膠卷底片在相機裡。"
	setcycle 120 correct_response "z"
	setcycle 120 Match "D"
	setcycle 120 Size "D"
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	run Trial_C

define loop List03_loop_E1
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_E
	set description "Balance = ABCD"
	set cycles 160
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if never
	setcycle 0 Orien "R"
	setcycle 0 Target "STI_EXP02/020-baignoire_bathtub_r.jpg"
	setcycle 0 Probe "The bath tube is falling."
	setcycle 0 correct_response "/"
	setcycle 0 Match "Y"
	setcycle 0 Size "L"
	setcycle 1 Orien "R"
	setcycle 1 Target "STI_EXP02/couch_r.jpg"
	setcycle 1 Probe "The couch is close to the right wall,"
	setcycle 1 correct_response "/"
	setcycle 1 Match "Y"
	setcycle 1 Size "L"
	setcycle 2 Orien "R"
	setcycle 2 Target "STI_EXP02/rocker_r.jpg"
	setcycle 2 Probe "The rocking chair is toward the west."
	setcycle 2 correct_response "/"
	setcycle 2 Match "Y"
	setcycle 2 Size "L"
	setcycle 3 Orien "R"
	setcycle 3 Target "STI_EXP02/178-locomotive_locomotive_r.jpg"
	setcycle 3 Probe "The train is running to the west."
	setcycle 3 correct_response "/"
	setcycle 3 Match "Y"
	setcycle 3 Size "L"
	setcycle 4 Orien "R"
	setcycle 4 Target "STI_EXP02/008-ambulance_ambulance_r.jpg"
	setcycle 4 Probe "The ambulance is running to the west."
	setcycle 4 correct_response "/"
	setcycle 4 Match "Y"
	setcycle 4 Size "L"
	setcycle 5 Orien "R"
	setcycle 5 Target "STI_EXP02/064-camping-car_camper_r.jpg"
	setcycle 5 Probe "The camper is running to the west."
	setcycle 5 correct_response "/"
	setcycle 5 Match "Y"
	setcycle 5 Size "L"
	setcycle 6 Orien "R"
	setcycle 6 Target "STI_EXP02/018-car_bus_r.jpg"
	setcycle 6 Probe "The bus is running to the west."
	setcycle 6 correct_response "/"
	setcycle 6 Match "Y"
	setcycle 6 Size "L"
	setcycle 7 Orien "R"
	setcycle 7 Target "STI_EXP02/car_r.jpg"
	setcycle 7 Probe "The car is running to the east."
	setcycle 7 correct_response "/"
	setcycle 7 Match "Y"
	setcycle 7 Size "L"
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	setcycle 10 Orien "R"
	setcycle 10 Target "STI_EXP02/plane_r.jpg"
	setcycle 10 Probe "The plane is in the left of the balcony."
	setcycle 10 correct_response "/"
	setcycle 10 Match "N"
	setcycle 10 Size "L"
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	setcycle 20 Orien "D"
	setcycle 20 Target "STI_EXP02/cementtruck.jpg"
	setcycle 20 Probe "The cement truck is passing my left side."
	setcycle 20 correct_response "/"
	setcycle 20 Match "Y"
	setcycle 20 Size "L"
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	setcycle 30 Orien "D"
	setcycle 30 Target "STI_EXP02/lawnmowertractor.jpg"
	setcycle 30 Probe "The lawn mower is in the right of me."
	setcycle 30 correct_response "/"
	setcycle 30 Match "N"
	setcycle 30 Size "L"
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	setcycle 40 Orien "F"
	setcycle 40 Target "STI_EXP02/badmintonracket_r.jpg"
	setcycle 40 Probe "The racket is hanged on the wall."
	setcycle 40 correct_response "z"
	setcycle 40 Match "Y"
	setcycle 40 Size "F"
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	setcycle 50 Orien "F"
	setcycle 50 Target "STI_EXP02/carrot01_r.jpg"
	setcycle 50 Probe "The carrot is on the shelf in the supermarket."
	setcycle 50 correct_response "z"
	setcycle 50 Match "N"
	setcycle 50 Size "F"
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	setcycle 80 Orien "F"
	setcycle 80 Target "STI_EXP02/240-pont_bridge.jpg"
	setcycle 80 Probe "The  train is running on the rail road."
	setcycle 80 correct_response "z"
	setcycle 80 Match "F"
	setcycle 80 Size "F"
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	setcycle 120 Orien "P"
	setcycle 120 Target "STI_EXP02/fryingpan02a.jpg"
	setcycle 120 Probe "The  film is in the camera."
	setcycle 120 correct_response "z"
	setcycle 120 Match "D"
	setcycle 120 Size "D"
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	run Trial_E

define loop List04_loop_C1
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Balance = DABC"
	set cycles 160
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if never
	setcycle 0 Orien "R"
	setcycle 0 Target "STI_EXP02/020-baignoire_bathtub_r.jpg"
	setcycle 0 Probe "那套浴缸是空的"
	setcycle 0 correct_response "/"
	setcycle 0 Match "N"
	setcycle 0 Size "L"
	setcycle 1 Orien "R"
	setcycle 1 Target "STI_EXP02/couch_r.jpg"
	setcycle 1 Probe "那組雙人沙發靠著西邊"
	setcycle 1 correct_response "/"
	setcycle 1 Match "N"
	setcycle 1 Size "L"
	setcycle 2 Orien "R"
	setcycle 2 Target "STI_EXP02/rocker_r.jpg"
	setcycle 2 Probe "那張搖椅朝向東邊"
	setcycle 2 correct_response "/"
	setcycle 2 Match "N"
	setcycle 2 Size "L"
	setcycle 3 Orien "R"
	setcycle 3 Target "STI_EXP02/178-locomotive_locomotive_r.jpg"
	setcycle 3 Probe "那輛蒸氣火車頭向東行駛"
	setcycle 3 correct_response "/"
	setcycle 3 Match "N"
	setcycle 3 Size "L"
	setcycle 4 Orien "R"
	setcycle 4 Target "STI_EXP02/008-ambulance_ambulance_r.jpg"
	setcycle 4 Probe "那輛救護車向東行駛"
	setcycle 4 correct_response "/"
	setcycle 4 Match "N"
	setcycle 4 Size "L"
	setcycle 5 Orien "R"
	setcycle 5 Target "STI_EXP02/064-camping-car_camper_r.jpg"
	setcycle 5 Probe "那輛露營車向東行駛"
	setcycle 5 correct_response "/"
	setcycle 5 Match "N"
	setcycle 5 Size "L"
	setcycle 6 Orien "R"
	setcycle 6 Target "STI_EXP02/018-car_bus_r.jpg"
	setcycle 6 Probe "那輛大巴士向東行駛"
	setcycle 6 correct_response "/"
	setcycle 6 Match "N"
	setcycle 6 Size "L"
	setcycle 7 Orien "R"
	setcycle 7 Target "STI_EXP02/car_r.jpg"
	setcycle 7 Probe "那輛氣派轎車向西行駛"
	setcycle 7 correct_response "/"
	setcycle 7 Match "N"
	setcycle 7 Size "L"
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	setcycle 10 Orien "D"
	setcycle 10 Target "STI_EXP02/plane.jpg"
	setcycle 10 Probe "那架飛機在觀景台左側"
	setcycle 10 correct_response "/"
	setcycle 10 Match "Y"
	setcycle 10 Size "L"
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	setcycle 20 Orien "D"
	setcycle 20 Target "STI_EXP02/cementtruck.jpg"
	setcycle 20 Probe "那輛水泥攪伴車在我右邊"
	setcycle 20 correct_response "/"
	setcycle 20 Match "N"
	setcycle 20 Size "L"
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	setcycle 30 Orien "R"
	setcycle 30 Target "STI_EXP02/lawnmowertractor_r.jpg"
	setcycle 30 Probe "那輛除草機在我右邊"
	setcycle 30 correct_response "/"
	setcycle 30 Match "Y"
	setcycle 30 Size "L"
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	setcycle 40 Orien "R"
	setcycle 40 Target "STI_EXP02/badmintonracket_r.jpg"
	setcycle 40 Probe "那隻羽球拍被球員舉起"
	setcycle 40 correct_response "/"
	setcycle 40 Match "N"
	setcycle 40 Size "S"
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	setcycle 50 Orien "D"
	setcycle 50 Target "STI_EXP02/carrot01.jpg"
	setcycle 50 Probe "那顆胡蘿蔔在超級市場的架子上"
	setcycle 50 correct_response "/"
	setcycle 50 Match "Y"
	setcycle 50 Size "S"
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	setcycle 60 Orien "D"
	setcycle 60 Target "STI_EXP02/pictureframe04.jpg"
	setcycle 60 Probe "那件相框在抽屜裡"
	setcycle 60 correct_response "/"
	setcycle 60 Match "N"
	setcycle 60 Size "S"
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	setcycle 70 Orien "R"
	setcycle 70 Target "STI_EXP02/007-allumette_match_r.jpg"
	setcycle 70 Probe "那支火柴棒被我用手指夾著"
	setcycle 70 correct_response "/"
	setcycle 70 Match "Y"
	setcycle 70 Size "S"
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	setcycle 80 Orien "F"
	setcycle 80 Target "STI_EXP02/240-pont_bridge.jpg"
	setcycle 80 Probe "那輛火車在鐵軌上奔馳。"
	setcycle 80 correct_response "z"
	setcycle 80 Match "F"
	setcycle 80 Size "F"
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	run Trial_C

define loop List04_loop_E1
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_E
	set description "Balance = ABCD"
	set cycles 160
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if never
	setcycle 0 Orien "R"
	setcycle 0 Target "STI_EXP02/020-baignoire_bathtub_r.jpg"
	setcycle 0 Probe "The bath tube is empty."
	setcycle 0 correct_response "/"
	setcycle 0 Match "N"
	setcycle 0 Size "L"
	setcycle 1 Orien "R"
	setcycle 1 Target "STI_EXP02/couch_r.jpg"
	setcycle 1 Probe "The couch is close to the left wall."
	setcycle 1 correct_response "/"
	setcycle 1 Match "N"
	setcycle 1 Size "L"
	setcycle 2 Orien "R"
	setcycle 2 Target "STI_EXP02/rocker_r.jpg"
	setcycle 2 Probe "The rocking chair is toward the east."
	setcycle 2 correct_response "/"
	setcycle 2 Match "N"
	setcycle 2 Size "L"
	setcycle 3 Orien "R"
	setcycle 3 Target "STI_EXP02/178-locomotive_locomotive_r.jpg"
	setcycle 3 Probe "The train is running to the east."
	setcycle 3 correct_response "/"
	setcycle 3 Match "N"
	setcycle 3 Size "L"
	setcycle 4 Orien "R"
	setcycle 4 Target "STI_EXP02/008-ambulance_ambulance_r.jpg"
	setcycle 4 Probe "The ambulance is running to the east."
	setcycle 4 correct_response "/"
	setcycle 4 Match "N"
	setcycle 4 Size "L"
	setcycle 5 Orien "R"
	setcycle 5 Target "STI_EXP02/064-camping-car_camper_r.jpg"
	setcycle 5 Probe "The camper is running to the east."
	setcycle 5 correct_response "/"
	setcycle 5 Match "N"
	setcycle 5 Size "L"
	setcycle 6 Orien "R"
	setcycle 6 Target "STI_EXP02/018-car_bus_r.jpg"
	setcycle 6 Probe "The bus is running to the east."
	setcycle 6 correct_response "/"
	setcycle 6 Match "N"
	setcycle 6 Size "L"
	setcycle 7 Orien "R"
	setcycle 7 Target "STI_EXP02/car_r.jpg"
	setcycle 7 Probe "The car is running to the west."
	setcycle 7 correct_response "/"
	setcycle 7 Match "N"
	setcycle 7 Size "L"
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	setcycle 10 Orien "D"
	setcycle 10 Target "STI_EXP02/plane.jpg"
	setcycle 10 Probe "The plane is in the left of the balcony."
	setcycle 10 correct_response "/"
	setcycle 10 Match "Y"
	setcycle 10 Size "L"
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	setcycle 20 Orien "D"
	setcycle 20 Target "STI_EXP02/cementtruck.jpg"
	setcycle 20 Probe "The cement truck is passing my right side."
	setcycle 20 correct_response "/"
	setcycle 20 Match "N"
	setcycle 20 Size "L"
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	setcycle 30 Orien "R"
	setcycle 30 Target "STI_EXP02/lawnmowertractor_r.jpg"
	setcycle 30 Probe "The lawn mower is in the right of me."
	setcycle 30 correct_response "/"
	setcycle 30 Match "Y"
	setcycle 30 Size "L"
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	setcycle 40 Orien "R"
	setcycle 40 Target "STI_EXP02/badmintonracket_r.jpg"
	setcycle 40 Probe "The racket is lifted by the player."
	setcycle 40 correct_response "/"
	setcycle 40 Match "N"
	setcycle 40 Size "S"
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	setcycle 50 Orien "D"
	setcycle 50 Target "STI_EXP02/carrot01.jpg"
	setcycle 50 Probe "The carrot is on the shelf in the supermarket."
	setcycle 50 correct_response "/"
	setcycle 50 Match "Y"
	setcycle 50 Size "S"
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	setcycle 60 Orien "D"
	setcycle 60 Target "STI_EXP02/pictureframe04.jpg"
	setcycle 60 Probe "The photo frame is in the drawer."
	setcycle 60 correct_response "/"
	setcycle 60 Match "N"
	setcycle 60 Size "S"
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	setcycle 70 Orien "R"
	setcycle 70 Target "STI_EXP02/007-allumette_match_r.jpg"
	setcycle 70 Probe "The match is grabbed by my fingers."
	setcycle 70 correct_response "/"
	setcycle 70 Match "Y"
	setcycle 70 Size "S"
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	setcycle 80 Orien "F"
	setcycle 80 Target "STI_EXP02/240-pont_bridge.jpg"
	setcycle 80 Probe "The  train is running on the rail road."
	setcycle 80 correct_response "z"
	setcycle 80 Match "F"
	setcycle 80 Size "F"
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	run Trial_E

define form_text_display List_Selection_cond1_C
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout infinite
	set spacing 10
	set rows "1;1;1;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>練習完成，準備開始正式實驗</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=列表1 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=列表2 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=列表3 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=列表4 var=List4


define form_text_display List_Selection_cond1_E
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout infinite
	set spacing 10
	set rows "1;1;1;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Start Experimental Session</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=LIST01 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=LIST02 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=LIST03 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=LIST04 var=List4


define loop Prac_loop_C
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Repeatedly runs another item"
	set cycles 6
	set column_order "Probe;Target;correct_response"
	set break_if never
	setcycle 0 correct_response "/"
	setcycle 0 Probe "那張桌子在地板上"
	setcycle 0 Target "STI_EXP02/Prac-01.jpg"
	setcycle 1 correct_response "/"
	setcycle 1 Probe "那隻玻璃花瓶在地上"
	setcycle 1 Target "STI_EXP02/Prac-02.jpg"
	setcycle 2 correct_response "z"
	setcycle 2 Probe "那片餅乾在碗裡"
	setcycle 2 Target "STI_EXP02/Prac-03.jpg"
	setcycle 3 correct_response "z"
	setcycle 3 Probe "那隻盤子是乾淨的"
	setcycle 3 Target "STI_EXP02/Prac-04.jpg"
	setcycle 4 correct_response "z"
	setcycle 4 Probe "那雙溜冰鞋在牆上"
	setcycle 4 Target "STI_EXP02/Prac-05.jpg"
	setcycle 5 correct_response "/"
	setcycle 5 Probe "那隻老鷹看著右方"
	setcycle 5 Target "STI_EXP02/Prac-06.jpg"
	run Trial_C

define loop Prac_loop_E
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_E
	set description "Repeatedly runs another item"
	set cycles 6
	set column_order "Probe;Target;correct_response"
	set break_if never
	setcycle 0 correct_response "/"
	setcycle 0 Probe "The table is on the floor."
	setcycle 0 Target "STI_EXP02/Prac-01.jpg"
	setcycle 1 correct_response "/"
	setcycle 1 Probe "The glass vace is on the ground."
	setcycle 1 Target "STI_EXP02/Prac-02.jpg"
	setcycle 2 correct_response "z"
	setcycle 2 Probe "The cokkies are in the bowl."
	setcycle 2 Target "STI_EXP02/Prac-03.jpg"
	setcycle 3 correct_response "z"
	setcycle 3 Probe "The dish is dirty."
	setcycle 3 Target "STI_EXP02/Prac-04.jpg"
	setcycle 4 correct_response "z"
	setcycle 4 Probe "The roller skates are on the wall."
	setcycle 4 Target "STI_EXP02/Prac-05.jpg"
	setcycle 5 correct_response "/"
	setcycle 5 Probe "The egale looks at the right side."
	setcycle 5 Target "STI_EXP02/Prac-06.jpg"
	run Trial_E

define sequence Prac_seq_C
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Prac_loop_C always

define sequence Prac_seq_E
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Prac_loop_E always

define sketchpad Probe_C
	set duration 0
	set description "Displays stimuli sentence"
	draw textline center=0 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="[Probe]" x=-304 y=0 z_index=0
	draw textline center=0 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text=讀完句子請按空白鍵 x=-128 y=288 z_index=0

define sketchpad Probe_E
	set duration 0
	set description "Displays stimuli sentence"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="[Probe]" x=-432 y=0 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=yes font_size=15 html=yes show_if=always text="Press space bar when you had read the sentence" x=-192 y=288 z_index=0

define keyboard_response Probe_response_C
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define keyboard_response Probe_response_E
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define sketchpad Q1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="Is English your native langauge?<br /><br />/:YES<br />Z:NO" x=0 y=0 z_index=0

define sketchpad Q2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="Is English your second langauge?<br /><br />/:YES<br />Z:NO" x=0 y=0 z_index=0

define sketchpad Q3
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="How proficient are you in English?<br /><br />Choose one number from <br />1 (Not proficient) to 7 (Very proficient)." x=0 y=0 z_index=0

define sketchpad Q4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="Do you have any comments about this experiment?<br /><br />Tell your epxerimenter directly. Thanks." x=0 y=0 z_index=0

define sketchpad Ready_C
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="若無疑問，按空白鍵開始實驗" x=0 y=0 z_index=0

define sketchpad Ready_E
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=30 html=yes show_if=always text="Press Space Key to Start" x=0 y=0 z_index=0

define keyboard_response Response_Q1
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "z;/"

define keyboard_response Response_Q2
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "z;/"

define keyboard_response Response_Q3
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7"

define sketchpad Second_Fixation_C
	set duration 500
	set description "Displays Second Fixation"
	draw fixdot color="#ffffff" show_if=always style=default x=0 y=0 z_index=0

define sketchpad Second_Fixation_E
	set duration 500
	set description "Displays Second Fixation"
	draw fixdot color="#ffffff" show_if=always style=default x=0 y=0 z_index=0

define sketchpad Start_C
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="練習結束。請按任意鍵開始正式實驗。" x=0 y=0 z_index=0

define sketchpad Start_E
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="End of practice. Press any key to start." x=0 y=0 z_index=0

define sketchpad Target_C
	set duration 0
	set description "Displays target picture"
	draw image center=1 file="[Target]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Target_E
	set duration 0
	set description "Displays target picture"
	draw image center=1 file="[Target]" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response Target_response_C
	set timeout 1500
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "z;/"

define keyboard_response Target_response_E
	set timeout 1500
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "z;/"

define sketchpad Target_response_correct_C
	set duration 500
	set description "Correct Feedback"
	draw textline center=1 color="#00aa00" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=答對了 x=0 y=0 z_index=0

define sketchpad Target_response_correct_E
	set duration 500
	set description "Correct Feedback"
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Correct!" x=0 y=0 z_index=0

define sketchpad Target_response_noans_C
	set duration 500
	set description "No Answer Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=按鍵太慢 x=0 y=0 z_index=0

define sketchpad Target_response_noans_E
	set duration 500
	set description "No Answer Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Too Late" x=0 y=0 z_index=0

define sketchpad Target_response_wrong_C
	set duration 500
	set description "Wrong Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=答錯了 x=0 y=0 z_index=0

define sketchpad Target_response_wrong_E
	set duration 500
	set description "Wrong Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Error!" x=0 y=0 z_index=0

define feedback Trial_Break_C
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=休息一下 x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=按空白鍵繼續實驗 x=0 y=32 z_index=0

define feedback Trial_Break_E
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Take a break" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Press space bar to continue" x=0 y=0 z_index=0

define sequence Trial_C
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run First_Fixation_C always
	run Probe_C always
	run Probe_response_C always
	run Second_Fixation_C always
	run Target_C always
	run Target_response_C always
	run Target_response_correct_C "[correct]=1"
	run Target_response_wrong_C "[correct]=0"
	run Target_response_noans_C "[response_time]<151 or [response_time]>1499"
	run Trial_logger_C always
	run Trial_Break_C "=self.get('count_Trial_C') <121 and self.get('count_Trial_C') % 41 == 40"

define sequence Trial_E
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run First_Fixation_E always
	run Probe_E always
	run Probe_response_E always
	run Second_Fixation_E always
	run Target_E always
	run Target_response_E always
	run Target_response_correct_E "[correct]=1"
	run Target_response_wrong_E "[correct]=0"
	run Target_response_noans_E "[response_time]<151 or [response_time]>1499"
	run Trial_logger_E always
	run Trial_Break_E "=self.get('count_Trial_E') <121 and self.get('count_Trial_E') % 41 == 40"

define logger Trial_logger_C
	set description "Logs experimental data"
	set auto_log yes

define logger Trial_logger_E
	set description "Logs experimental data"
	set auto_log yes

define sketchpad Welcome_C
	set duration keypress
	set description "First Instruction"
	draw textline center=1 color=white font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=句圖比對作業 x=0 y=-288 z_index=0
	draw textline center=0 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text="每一題的的程序是先一個要閱讀的句子，再呈現要判斷的圖片。 <br /><br />你的任務是判斷圖片呈現的物件，是句子裡提到的物件。你可以<br />確實讀完句子，再按空白鍵讓電腦呈現圖片。<br /><br />如果圖片呈現的是句子提到的物件，請按'/'。<br />如果圖片呈現的不是句子提到的物件，請按'Z'。<br /><br />判斷圖片是否符合有時間限制，請以最快且最正確的方式作答。<br /><br />" x=-448 y=-224 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text=請確認沒有問題之後按鍵開始實驗 x=0 y=192 z_index=0

define sketchpad Welcome_E
	set duration keypress
	set description "First Instruction"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Sentence Picture Verification" x=0 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Press space bar to practice" x=0 y=192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=-160 y=-32 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Next you will read a sentence which is followed by a picture. <br /><br />In every trial, your task is to verify if the picture show the object <br />mentioned in the preceding sentence.<br /><br />Press '/' when the picture shows the object.<br />Press 'Z' when the picture does not show the object.<br /><br />Try to be as fast and accurate as possible." x=-448 y=-192 z_index=0

