---
API: 2
OpenSesame: 3.1.1
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title Simulation2016_EXP02
set subject_parity even
set subject_nr 0
set start EXP02
set sampler_backend legacy
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set foreground white
set font_size 18
set font_italic no
set font_family "chinese-japanese-korean"
set font_bold no
set experiment_path "D:/core/Research/projects/Embodied/EXPDATA/ActionObject/2016_Simulation/EXP"
set description "Matching Tasks"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi yes
set background black

define sequence Chinese
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Welcome_C always
	run Prac_setup_C always
	run Prac_C always
	run Start_C always
	run Exp_seq_C always
	run End_C always

define sequence Dutch
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Welcome_D always
	run Prac_setup_D always
	run Prac_D always
	run Start_D always
	run Exp_seq_D always
	run End_D always

define sequence EXP02
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Language_Selection always
	run Chinese "[language1]='yes'"
	run Dutch "[language2]='yes'"
	run English "[language3]='yes'"

define sketchpad End_C
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="實驗結束。請通知實驗者。" x=0 y=0 z_index=0

define sketchpad End_D
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Eind Experiment<br/><br/>Vertel de experimentator." x=0 y=0 z_index=0

define sketchpad End_E
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="End of Experiment<br /><br />Before leave LAB. <br />Please answer four questions.<br /><br /><br />Press SPACE to quetions." x=0 y=0 z_index=0

define sequence English
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Welcome_E always
	run Prac_setup_E always
	run Prac_E always
	run Start_E always
	run Exp_seq_E always
	run End_E always

define sequence Exp_seq_C
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run List_Selection_cond_C always
	run Ready_C always
	run List01_loop_C "[List1] = 'yes'"
	run List02_loop_C "[List2] = 'yes'"
	run List03_loop_C "[List3] = 'yes'"
	run List04_loop_C "[List4] = 'yes'"

define sequence Exp_seq_D
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run List_Selection_cond_D always
	run Ready_D always
	run List01_loop_D "[List1] = 'yes'"
	run List02_loop_D "[List2] = 'yes'"
	run List03_loop_D "[List3] = 'yes'"
	run List04_loop_D "[List4] = 'yes'"

define sequence Exp_seq_E
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run List_Selection_cond_E always
	run Ready_E always
	run List01_loop_E "[List1] = 'yes'"
	run List02_loop_E "[List2] = 'yes'"
	run List03_loop_E "[List3] = 'yes'"
	run List04_loop_E "[List4] = 'yes'"

define sketchpad First_Fixation
	set duration 1000
	set description "Displays Initial Fixation"
	draw fixdot color="#ffff00" show_if=always style=default x=-432 y=0 z_index=0

define sketchpad First_Fixation_Prac
	set duration 1000
	set description "Displays Initial Fixation"
	draw fixdot color="#ffff00" show_if=always style=default x=-432 y=0 z_index=0

define form_text_display Language_Selection
	set timeout infinite
	set spacing 10
	set rows "1;1;1;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Welcom You Join This Experiment</span>"
	set form_text "Select a Langauge"
	set description "A simple text display form"
	set cols "1;1"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 1 1 button center=yes frame=yes text=Chinese var=language1
	widget 1 2 1 1 button center=yes frame=yes text=Dutch var=language2
	widget 2 2 1 1 button center=yes frame=yes text=English var=language3


define loop List01_loop_C
	set source_file "C_List01.csv"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Balance = ABCD"
	set cycles 1
	set continuous no
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Orien ""
	setcycle 0 Target ""
	setcycle 0 Probe ""
	setcycle 0 correct_response ""
	setcycle 0 Match ""
	setcycle 0 Size ""
	run Trial

define loop List01_loop_D
	set source_file "D_List01.csv"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Balance = ABCD"
	set cycles 1
	set continuous no
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Orien ""
	setcycle 0 Target ""
	setcycle 0 Probe ""
	setcycle 0 correct_response ""
	setcycle 0 Match ""
	setcycle 0 Size ""
	run Trial

define loop List01_loop_E
	set source_file "E_LIST01.csv"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_E
	set description "Balance = ABCD"
	set cycles 1
	set continuous no
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Orien ""
	setcycle 0 Target ""
	setcycle 0 Probe ""
	setcycle 0 correct_response ""
	setcycle 0 Match ""
	setcycle 0 Size ""
	run Trial

define loop List02_loop_C
	set source_file "C_List02.csv"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Balance = BCDA"
	set cycles 1
	set continuous no
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Orien ""
	setcycle 0 Target ""
	setcycle 0 Probe ""
	setcycle 0 correct_response ""
	setcycle 0 Match ""
	setcycle 0 Size ""
	run Trial

define loop List02_loop_D
	set source_file "D_List02.csv"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Balance = BCDA"
	set cycles 1
	set continuous no
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Orien ""
	setcycle 0 Target ""
	setcycle 0 Probe ""
	setcycle 0 correct_response ""
	setcycle 0 Match ""
	setcycle 0 Size ""
	run Trial

define loop List02_loop_E
	set source_file "E_LIST02.csv"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_E
	set description "Balance = ABCD"
	set cycles 1
	set continuous no
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Orien ""
	setcycle 0 Target ""
	setcycle 0 Probe ""
	setcycle 0 correct_response ""
	setcycle 0 Match ""
	setcycle 0 Size ""
	run Trial

define loop List03_loop_C
	set source_file "C_List03.csv"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Balance = CDAB"
	set cycles 1
	set continuous no
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Orien ""
	setcycle 0 Target ""
	setcycle 0 Probe ""
	setcycle 0 correct_response ""
	setcycle 0 Match ""
	setcycle 0 Size ""
	run Trial

define loop List03_loop_D
	set source_file "D_List03.csv"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Balance = CDAB"
	set cycles 1
	set continuous no
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Orien ""
	setcycle 0 Target ""
	setcycle 0 Probe ""
	setcycle 0 correct_response ""
	setcycle 0 Match ""
	setcycle 0 Size ""
	run Trial

define loop List03_loop_E
	set source_file "E_LIST03.csv"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_E
	set description "Balance = ABCD"
	set cycles 1
	set continuous no
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Orien ""
	setcycle 0 Target ""
	setcycle 0 Probe ""
	setcycle 0 correct_response ""
	setcycle 0 Match ""
	setcycle 0 Size ""
	run Trial

define loop List04_loop_C
	set source_file "C_List04.csv"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Balance = DABC"
	set cycles 1
	set continuous no
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Orien ""
	setcycle 0 Target ""
	setcycle 0 Probe ""
	setcycle 0 correct_response ""
	setcycle 0 Match ""
	setcycle 0 Size ""
	run Trial

define loop List04_loop_D
	set source_file "D_List04.csv"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Balance = DABC"
	set cycles 1
	set continuous no
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Orien ""
	setcycle 0 Target ""
	setcycle 0 Probe ""
	setcycle 0 correct_response ""
	setcycle 0 Match ""
	setcycle 0 Size ""
	run Trial

define loop List04_loop_E
	set source_file "E_LIST04.csv"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_E
	set description "Balance = ABCD"
	set cycles 1
	set continuous no
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Orien ""
	setcycle 0 Target ""
	setcycle 0 Probe ""
	setcycle 0 correct_response ""
	setcycle 0 Match ""
	setcycle 0 Size ""
	run Trial

define form_text_display List_Selection_cond_C
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout infinite
	set spacing 10
	set rows "1;1;1;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>練習完成，準備開始正式實驗</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=列表1 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=列表2 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=列表3 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=列表4 var=List4


define form_text_display List_Selection_cond_D
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout infinite
	set spacing 10
	set rows "1;1;1;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	__form_title__
	<span size=24>
	Start Experimental Session</span>
	__end__
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text="Lijst 1" var=List1
	widget 1 1 1 1 button center=yes frame=yes text="Lijst 2" var=List2
	widget 0 2 1 1 button center=yes frame=yes text="Lijst 3" var=List3
	widget 1 2 1 1 button center=yes frame=yes text="Lijst 4" var=List4


define form_text_display List_Selection_cond_E
	# widget 0 1 2 1 label center=no text="[form_text]"
	set timeout infinite
	set spacing 10
	set rows "1;1;1;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Start Experimental Session</span>"
	set form_text ""
	set description "Select experimental condition"
	set cols "1;1"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 1 1 button center=yes frame=yes text=LIST01 var=List1
	widget 1 1 1 1 button center=yes frame=yes text=LIST02 var=List2
	widget 0 2 1 1 button center=yes frame=yes text=LIST03 var=List3
	widget 1 2 1 1 button center=yes frame=yes text=LIST04 var=List4


define loop Prac_C
	set source_file ""
	set source table
	set repeat 100
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[correct_count]=6"
	setcycle 0 empty_column ""
	run Prac_seq_C

define inline_script Prac_Count
	set description "Executes Python code"
	___run__
	if var.correct == 1: 
		var.correct_count +=1
	else:
		var.correct_count = 0
		var.reset_loop = 1
	__end__
	set _prepare ""

define loop Prac_D
	set source_file ""
	set source table
	set repeat 100
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[correct_count]=6"
	setcycle 0 empty_column ""
	run Prac_seq_D

define loop Prac_E
	set source_file ""
	set source table
	set repeat 100
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[correct_count]=6"
	setcycle 0 empty_column ""
	run Prac_seq_E

define inline_script Prac_Reset_C
	set description "Executes Python code"
	set _run "var.reset_loop = 0"
	set _prepare ""

define inline_script Prac_Reset_D
	set description "Executes Python code"
	set _run "var.reset_loop = 0"
	set _prepare ""

define inline_script Prac_Reset_E
	set description "Executes Python code"
	set _run "var.reset_loop = 0"
	set _prepare ""

define sequence Prac_Trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run First_Fixation_Prac always
	run Probe_Prac always
	run Second_Fixation_Prac always
	run Target_Prac always
	run Target_response_Prac always
	run Target_response_correct_Prac "[correct]=1"
	run Target_response_wrong_Prac "[correct]=0"
	run Target_response_noans_Prac "[response_time] > 1499"
	run Prac_Count always

define loop Prac_loop_C
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set column_order "Probe;Target;correct_response"
	set break_if_on_first yes
	set break_if "[reset_loop]=1"
	setcycle 0 correct_response "/"
	setcycle 0 Probe 那張桌子在地板上
	setcycle 0 Target "STI_EXP02/Prac-01.jpg"
	setcycle 1 correct_response "/"
	setcycle 1 Probe 那隻玻璃花瓶在地上
	setcycle 1 Target "STI_EXP02/Prac-02.jpg"
	setcycle 2 correct_response z
	setcycle 2 Probe 那片餅乾在碗裡
	setcycle 2 Target "STI_EXP02/Prac-03.jpg"
	setcycle 3 correct_response z
	setcycle 3 Probe 那隻盤子是乾淨的
	setcycle 3 Target "STI_EXP02/Prac-04.jpg"
	setcycle 4 correct_response z
	setcycle 4 Probe 那雙溜冰鞋在牆上
	setcycle 4 Target "STI_EXP02/Prac-05.jpg"
	setcycle 5 correct_response "/"
	setcycle 5 Probe 那隻老鷹在天空飛翔
	setcycle 5 Target "STI_EXP02/Prac-06.jpg"
	run Prac_Trial

define loop Prac_loop_D
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set column_order "Probe;Target;correct_response"
	set break_if_on_first yes
	set break_if "[reset_loop]=1"
	setcycle 0 correct_response "/"
	setcycle 0 Probe "De tafel is op de vloer."
	setcycle 0 Target "STI_EXP02/Prac-01.jpg"
	setcycle 1 correct_response "/"
	setcycle 1 Probe "Het glas vace ligt op de grond."
	setcycle 1 Target "STI_EXP02/Prac-02.jpg"
	setcycle 2 correct_response z
	setcycle 2 Probe "De cokkies zijn in de kom ."
	setcycle 2 Target "STI_EXP02/Prac-03.jpg"
	setcycle 3 correct_response z
	setcycle 3 Probe "Het gerecht is vuil."
	setcycle 3 Target "STI_EXP02/Prac-04.jpg"
	setcycle 4 correct_response z
	setcycle 4 Probe "De rolschaatsen zijn op de muur."
	setcycle 4 Target "STI_EXP02/Prac-05.jpg"
	setcycle 5 correct_response "/"
	setcycle 5 Probe "De egale vliegt ."
	setcycle 5 Target "STI_EXP02/Prac-06.jpg"
	run Prac_Trial

define loop Prac_loop_E
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_E
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set column_order "Probe;Target;correct_response"
	set break_if_on_first yes
	set break_if "[reset_loop]=1"
	setcycle 0 correct_response "/"
	setcycle 0 Probe "The table is on the floor."
	setcycle 0 Target "STI_EXP02/Prac-01.jpg"
	setcycle 1 correct_response "/"
	setcycle 1 Probe "The glass vace is on the ground."
	setcycle 1 Target "STI_EXP02/Prac-02.jpg"
	setcycle 2 correct_response z
	setcycle 2 Probe "The cokkies are in the bowl."
	setcycle 2 Target "STI_EXP02/Prac-03.jpg"
	setcycle 3 correct_response z
	setcycle 3 Probe "The dish is dirty."
	setcycle 3 Target "STI_EXP02/Prac-04.jpg"
	setcycle 4 correct_response z
	setcycle 4 Probe "The roller skates are on the wall."
	setcycle 4 Target "STI_EXP02/Prac-05.jpg"
	setcycle 5 correct_response "/"
	setcycle 5 Probe "The egale is flying."
	setcycle 5 Target "STI_EXP02/Prac-06.jpg"
	run Prac_Trial

define sequence Prac_seq_C
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Prac_Reset_C always
	run Prac_loop_C always

define sequence Prac_seq_D
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Prac_Reset_D always
	run Prac_loop_D always

define sequence Prac_seq_E
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Prac_Reset_E always
	run Prac_loop_E always

define inline_script Prac_setup_C
	set description "Executes Python code"
	___run__
	var.correct_count = 0
	var.reset_loop = 0
	__end__
	set _prepare ""

define inline_script Prac_setup_D
	set description "Executes Python code"
	___run__
	var.correct_count = 0
	var.reset_loop = 0
	__end__
	set _prepare ""

define inline_script Prac_setup_E
	set description "Executes Python code"
	___run__
	var.correct_count = 0
	var.reset_loop = 0
	__end__
	set _prepare ""

define sketchpad Probe
	set duration 0
	set description "Displays stimuli sentence"
	draw textline center=0 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="[Probe]" x=-432 y=0 z_index=0

define sketchpad Probe_Prac
	set duration keypress
	set description "Displays stimuli sentence"
	draw textline center=0 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="[Probe]" x=-432 y=0 z_index=0

define keyboard_response Probe_response
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define sketchpad Ready_C
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="若無疑問，按空白鍵開始實驗" x=0 y=0 z_index=0

define sketchpad Ready_D
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="若無疑問，按空白鍵開始實驗" x=0 y=0 z_index=0

define sketchpad Ready_E
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=30 html=yes show_if=always text="Press Space Key to Start" x=0 y=0 z_index=0

define sketchpad Second_Fixation
	set duration 500
	set description "Displays Second Fixation"
	draw fixdot color="#ffffff" show_if=always style=default x=0 y=0 z_index=0

define sketchpad Second_Fixation_Prac
	set duration 500
	set description "Displays Second Fixation"
	draw fixdot color="#ffffff" show_if=always style=default x=0 y=0 z_index=0

define sketchpad Start_C
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text="練習結束。請按任意鍵開始正式實驗。" x=0 y=0 z_index=0

define sketchpad Start_D
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="Einde van de praktijk. Druk op een toets om te starten." x=0 y=0 z_index=0

define sketchpad Start_E
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text="End of practice. Press any key to start." x=0.0 y=2.0 z_index=0

define sketchpad Target
	set duration 0
	set description "Displays target picture"
	draw image center=1 file="[Target]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Target_Prac
	set duration 0
	set description "Displays target picture"
	draw image center=1 file="[Target]" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response Target_response
	set timeout 2000
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "z;/"

define keyboard_response Target_response_Prac
	set timeout 2000
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "z;/"

define sketchpad Target_response_correct
	set duration 500
	set description "Correct Feedback"
	draw textline center=1 color="#00aa00" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="作答正確!" x=-6 y=-3 z_index=0
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Correct!" x=-6 y=-3 z_index=0
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Correct!" x=-6 y=-3 z_index=0

define sketchpad Target_response_correct_Prac
	set duration 500
	set description "Correct Feedback"
	draw textline center=1 color="#00aa00" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="作答正確!" x=-6 y=-3 z_index=0
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Correct!" x=-6 y=-3 z_index=0
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Correct!" x=-6 y=-3 z_index=0

define sketchpad Target_response_noans
	set duration 500
	set description "No Answer Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text=按鍵太慢 x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Te Laat" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Too Late" x=0 y=0 z_index=0

define sketchpad Target_response_noans_Prac
	set duration 500
	set description "No Answer Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text=按鍵太慢 x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Te Laat" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Too Late" x=0 y=0 z_index=0

define sketchpad Target_response_wrong
	set duration 500
	set description "Wrong Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="作答錯誤!" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Fout!" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Error!" x=0 y=0 z_index=0

define sketchpad Target_response_wrong_Prac
	set duration 500
	set description "Wrong Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="作答錯誤!" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Fout!" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Error!" x=0 y=0 z_index=0

define sequence Trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run First_Fixation always
	run Probe always
	run Probe_response always
	run Second_Fixation always
	run Target always
	run Target_response always
	run Target_response_correct "[correct]=1"
	run Target_response_wrong "[correct]=0"
	run Target_response_noans "[response_time]>1499"
	run Trial_logger always
	run Trial_Break "=self.get('count_Trial') % 33 == 32"

define feedback Trial_Break
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Take a break" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Press space bar to continue" x=0 y=0 z_index=0

define logger Trial_logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad Welcome_C
	set duration keypress
	set description "First Instruction"
	draw textline center=1 color=white font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if=always text=句圖比對作業 x=0 y=-288 z_index=0
	draw textline center=0 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text="每一題的的程序是先一個要閱讀的句子，再呈現要判斷的圖片。 <br /><br />你的任務是判斷圖片呈現的物件，是句子裡提到的物件。你可以<br />確實讀完句子，再按空白鍵讓電腦呈現圖片。<br /><br />如果圖片呈現的是句子提到的物件，請按'/'。<br />如果圖片呈現的不是句子提到的物件，請按'Z'。<br /><br />判斷圖片是否符合有時間限制，請以最快且最正確的方式作答。<br /><br />" x=-448 y=-224 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if=always text=請確認沒有問題之後按鍵開始實驗 x=0 y=192 z_index=0

define sketchpad Welcome_D
	set duration keypress
	set description "First Instruction"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Zin Picture Verification" x=0 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Druk op de spatiebalk om te oefenen" x=0 y=192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=-160 y=-32 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Vervolgens krijgt u een zin die wordt gevolgd door een foto te lezen. <br/><br/>In elk proces, uw taak is om te controleren of het beeld<br/><br/> van de in de vorige zin genoemde object te laten zien.<br/><br/>Druk op ' / ' als het beeld toont het object.<br />Druk op ' Z' als het beeld van het object niet tonen.<br /><br/>Probeer zo snel en accuraat als mogelijk te zijn." x=-448 y=-192 z_index=0

define sketchpad Welcome_E
	set duration keypress
	set description "First Instruction"
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Sentence Picture Verification" x=-20 y=-284 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Press space bar to practice" x=0 y=192 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=-160 y=-32 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Next you will read a sentence which is followed by a picture. <br /><br />In every trial, your task is to verify if the picture show the object <br />mentioned in the preceding sentence.<br /><br />Press '/' when the picture shows the object.<br />Press 'Z' when the picture does not show the object.<br /><br />Try to be as fast and accurate as possible." x=-448 y=-192 z_index=0

