---
API: 2
OpenSesame: 3.1.1
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title Simulation2016_EXP02
set subject_parity even
set subject_nr 0
set start EXP02
set sampler_backend legacy
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set foreground white
set font_size 18
set font_italic no
set font_family "chinese-japanese-korean"
set font_bold no
set experiment_path "D:/core/Research/projects/Embodied/EXPDATA/ActionObject/2016_Simulation/EXP"
set description "Matching Tasks"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi yes
set background black

define sequence EXP02
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Language_Selection always
	run Session always

define sketchpad End
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language]==1" text="實驗結束。請通知實驗者。" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if="[language2]==yes" text="Einde van het experiment . Raadpleeg dan uw experimentator." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if="[language3]==yes" text="End of Experiment. Please tell your experimenter." x=0 y=0 z_index=0

define loop Exp_loop_C
	set source_file "[List]"
	set source file
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Balance = ABCD"
	set cycles 1
	set continuous no
	set column_order "Probe;Target;Match;correct_response;Orien;Size"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Orien ""
	setcycle 0 Target ""
	setcycle 0 Probe ""
	setcycle 0 correct_response ""
	setcycle 0 Match ""
	setcycle 0 Size ""
	run Trial

define sequence Exp_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Exp_loop_C always

define sketchpad First_Fixation
	set duration 1000
	set description "Displays Initial Fixation"
	draw fixdot color="#ffff00" show_if=always style=default x=-432 y=0 z_index=0

define sketchpad First_Fixation_Prac
	set duration 1000
	set description "Displays Initial Fixation"
	draw fixdot color="#ffff00" show_if=always style=default x=-432 y=0 z_index=0

define form_text_display Language_Selection
	set timeout infinite
	set spacing 10
	set rows "1;1;1;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Welcom You Join This Experiment</span>"
	set form_text "Select a Langauge"
	set description "A simple text display form"
	set cols "1;1"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 1 1 button center=yes frame=yes text=Chinese var=language1
	widget 1 2 1 1 button center=yes frame=yes text=Dutch var=language2
	widget 2 2 1 1 button center=yes frame=yes text=English var=language3


define inline_script List_Select
	set description "Executes Python code"
	___run__
	if [langauag1] == yes:
		lists = ['C_List01.csv','C_List02.csv','C_List03.csv','C_List04.csv']
	elif [language2] == yes:
		lists = ['D_List01.csv','D_List02.csv','D_List03.csv','D_List04.csv']
	else:
		lists = ['E_List01.csv','E_List02.csv','E_List03.csv','E_List04.csv']
		
	
	### Get the subject number
	nr = self.get('subject_nr')
	
	### Generate a random sequence based the prior seed
	### Defind seed by yourself
	import random
	SEED = 345
	
	seq = [0,4,8,12]
	random.seed(SEED)
	random.shuffle(seq)
	
	### Shift the subject numbers
	### Push to the next sequence
	if nr <=16:
		nr += seq[0]
	elif nr > 16 & nr <= 32:
		nr += seq[1]
	elif nr > 32 & nr <= 48:
		nr += seq[2]
	else:
		nr += seq[3]
	
	### Assign the list in one Latin Squane
	if (nr / 4) % 4 == 1:
		if nr % 4 == 0:
			lst = lists[0]
		elif nr % 4 == 1:
			lst = lists[1]
		elif nr % 4 == 2:
			lst = lists[2]
		else:
			lst = lists[3]
	elif (nr / 4) % 4 == 2:
		if nr % 4 == 1:
			lst = lists[0]
		elif nr % 4 == 2:
			lst = lists[1]
		elif nr % 4 == 3:
			lst = lists[2]
		else:
			lst = lists[3]
	elif (nr / 4) % 4 == 3:
		if nr % 4 == 2:
			lst = lists[0]
		elif nr % 4 == 3:
			lst = lists[1]
		elif nr % 4 == 0:
			lst = lists[2]
		else:
			lst = lists[3]
	else:
		if nr % 4 == 3:
			lst = lists[0]
		elif nr % 4 == 0:
			lst = lists[1]
		elif nr % 4 == 1:
			lst = lists[2]
		else:
			lst = lists[3]
	
	### Output [List] to the loop object
	exp.set('List', lst)
	__end__
	set _prepare ""

define loop Prac
	set source_file ""
	set source table
	set repeat 100
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[correct_count]=6"
	setcycle 0 empty_column ""
	run Prac_seq_C

define inline_script Prac_Count
	set description "Executes Python code"
	___run__
	if var.correct == 1: 
		var.correct_count +=1
	else:
		var.correct_count = 0
		var.reset_loop = 1
	__end__
	set _prepare ""

define inline_script Prac_Reset_C
	set description "Executes Python code"
	set _run "var.reset_loop = 0"
	set _prepare ""

define sequence Prac_Trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run First_Fixation_Prac always
	run Probe_Prac always
	run Second_Fixation_Prac always
	run Target_Prac always
	run Target_response_Prac always
	run Target_response_correct_Prac "[correct]=1"
	run Target_response_wrong_Prac "[correct]=0"
	run Target_response_noans_Prac "[response_time] > 1499"
	run Prac_Count always

define loop Prac_loop_C
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item Trial_C
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set column_order "Probe;Target;correct_response"
	set break_if_on_first yes
	set break_if "[reset_loop]=1"
	setcycle 0 correct_response j
	setcycle 0 Probe_C 那張桌子在地板上
	setcycle 0 Target "STI_EXP02/Prac-01.jpg"
	setcycle 0 Probe_D "De tafel is op de vloer."
	setcycle 0 Probe_E "The table is on the floor."
	setcycle 1 correct_response j
	setcycle 1 Probe_C 那隻玻璃花瓶在地上
	setcycle 1 Target "STI_EXP02/Prac-02.jpg"
	setcycle 1 Probe_D "Het glas vace ligt op de grond."
	setcycle 1 Probe_E "The glass vace is on the ground."
	setcycle 2 correct_response f
	setcycle 2 Probe_C 那片餅乾在碗裡
	setcycle 2 Target "STI_EXP02/Prac-03.jpg"
	setcycle 2 Probe_D "De cokkies zijn in de kom ."
	setcycle 2 Probe_E "The cokkies are in the bowl."
	setcycle 3 correct_response f
	setcycle 3 Probe_C 那隻盤子是乾淨的
	setcycle 3 Target "STI_EXP02/Prac-04.jpg"
	setcycle 3 Probe_D "Het gerecht is vuil."
	setcycle 3 Probe_E "The dish is dirty."
	setcycle 4 correct_response f
	setcycle 4 Probe_C 那雙溜冰鞋在牆上
	setcycle 4 Target "STI_EXP02/Prac-05.jpg"
	setcycle 4 Probe_D "De rolschaatsen zijn op de muur."
	setcycle 4 Probe_E "The roller skates are on the wall."
	setcycle 5 correct_response j
	setcycle 5 Probe_C 那隻老鷹在天空飛翔
	setcycle 5 Target "STI_EXP02/Prac-06.jpg"
	setcycle 5 Probe_D "De egale vliegt ."
	setcycle 5 Probe_E "The egale is flying."
	run Prac_Trial

define sequence Prac_seq_C
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Prac_Reset_C always
	run Prac_loop_C always

define inline_script Prac_setup
	set description "Executes Python code"
	___run__
	var.correct_count = 0
	var.reset_loop = 0
	__end__
	set _prepare ""

define sketchpad Probe
	set duration 0
	set description "Displays stimuli sentence"
	draw textline center=0 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="[Probe]" x=-432 y=0 z_index=0

define sketchpad Probe_Prac
	set duration keypress
	set description "Displays stimuli sentence"
	draw textline center=0 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if="[language1]==yes" text="[Probe_C]" x=-432 y=0 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if="[language2]==yes" text="[Probe_D]" x=-432 y=0 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if="[language3]==yes" text="[Probe_E]" x=-432 y=0 z_index=0

define keyboard_response Probe_response
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define sketchpad Second_Fixation
	set duration 500
	set description "Displays Second Fixation"
	draw fixdot color="#ffffff" show_if=always style=default x=0 y=0 z_index=0

define sketchpad Second_Fixation_Prac
	set duration 500
	set description "Displays Second Fixation"
	draw fixdot color="#ffffff" show_if=always style=default x=0 y=0 z_index=0

define sequence Session
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Welcome always
	run Welcome_response always
	run Prac_setup always
	run Prac always
	run Start always
	run Start_response always
	run List_Select always
	run Exp_seq always
	run End always

define sketchpad Start
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]==yes" text="練習結束。請按空白鍵開始正式實驗。" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if="[language2]==yes" text="Einde van Practice.Press spatiebalk om dit experiment te starten." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if="[language3]==yes" text="End of Practice.Press Space bar to start this experiment." x=0 y=0 z_index=0

define keyboard_response Start_response
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

define sketchpad Target
	set duration 0
	set description "Displays target picture"
	draw image center=1 file="[Target]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Target_Prac
	set duration 0
	set description "Displays target picture"
	draw image center=1 file="[Target]" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response Target_response
	set timeout 2000
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "j;f"

define keyboard_response Target_response_Prac
	set timeout 2000
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "j;f"

define sketchpad Target_response_correct
	set duration 500
	set description "Correct Feedback"
	draw textline center=1 color="#00aa00" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="作答正確!" x=-6 y=-3 z_index=0
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Correct!" x=-6 y=-3 z_index=0
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Correct!" x=-6 y=-3 z_index=0

define sketchpad Target_response_correct_Prac
	set duration 500
	set description "Correct Feedback"
	draw textline center=1 color="#00aa00" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="作答正確!" x=-6 y=-3 z_index=0
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Correct!" x=-6 y=-3 z_index=0
	draw textline center=1 color="#00aa00" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Correct!" x=-6 y=-3 z_index=0

define sketchpad Target_response_noans
	set duration 500
	set description "No Answer Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text=按鍵太慢 x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Te Laat" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Too Late" x=0 y=0 z_index=0

define sketchpad Target_response_noans_Prac
	set duration 500
	set description "No Answer Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text=按鍵太慢 x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Te Laat" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Too Late" x=0 y=0 z_index=0

define sketchpad Target_response_wrong
	set duration 500
	set description "Wrong Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="作答錯誤!" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Fout!" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Error!" x=0 y=0 z_index=0

define sketchpad Target_response_wrong_Prac
	set duration 500
	set description "Wrong Feedback"
	draw textline center=1 color="#ff0000" font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]=yes" text="作答錯誤!" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]=yes" text="Fout!" x=0 y=0 z_index=0
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]=yes" text="Error!" x=0 y=0 z_index=0

define sequence Trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run First_Fixation always
	run Probe always
	run Probe_response always
	run Second_Fixation always
	run Target always
	run Target_response always
	run Target_response_correct "[correct]=1"
	run Target_response_wrong "[correct]=0"
	run Target_response_noans "[response_time]>1499"
	run Trial_logger always
	run Trial_Break "=self.get('count_Trial') % 33 == 32"

define feedback Trial_Break
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Take a break" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=48 html=yes show_if=always text="Press space bar to continue" x=0 y=0 z_index=0

define logger Trial_logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad Welcome
	set duration 0
	set description "First Instruction"
	draw textline center=1 color=white font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=48 html=yes show_if="[language1]==yes" text=句圖比對作業 x=0 y=-288 z_index=0
	draw textline center=0 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if="[language1]==yes" text="每一題的的程序是先一個要閱讀的句子，再呈現要判斷的圖片。 <br /><br />你的任務是判斷圖片呈現的物件，是句子裡提到的物件。你可以<br />確實讀完句子，再按空白鍵讓電腦呈現圖片。<br /><br />如果圖片呈現的是句子提到的物件，請按'J'。<br />如果圖片呈現的不是句子提到的物件，請按'F'。<br /><br />判斷圖片是否符合有時間限制，請以最快且最正確的方式作答。<br /><br />" x=-448 y=-224 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=32 html=yes show_if="[language1]==yes" text=請確認沒有問題之後按空白鍵開始實驗 x=0 y=192 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=48 html=yes show_if="[language2]==yes" text="Zin Picture Verification" x=0 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if="[language2]==yes" text="Druk op de spatiebalk om te oefenen" x=0 y=192 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if="[language2]==yes" text="Vervolgens krijgt u een zin die wordt gevolgd door een foto te lezen. <br/><br/>In elk proces, uw taak is om te controleren of het beeld<br/><br/> van de in de vorige zin genoemde object te laten zien.<br/><br/>Druk op 'J' als het beeld toont het object.<br />Druk op 'F' als het beeld van het object niet tonen.<br /><br/>Probeer zo snel en accuraat als mogelijk te zijn." x=-448 y=-192 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=mono font_italic=no font_size=48 html=yes show_if="[language3]==yes" text="Sentence Picture Verification" x=-20 y=-284 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if="[language3]==yes" text="Press space bar to practice" x=0 y=192 z_index=0
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if="[language3]==yes" text="Next you will read a sentence which is followed by a picture. <br /><br />In every trial, your task is to verify if the picture show the object <br />mentioned in the preceding sentence.<br /><br />Press 'J' when the picture shows the object.<br />Press 'F' when the picture does not show the object.<br /><br />Try to be as fast and accurate as possible." x=-448 y=-192 z_index=0

define keyboard_response Welcome_response
	set timeout infinite
	set flush yes
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses space

